PsychoPy2experiment version="2020.1.3"
Settings
  Completed URL = https://docs.google.com/forms/d/e/1FAIpQLSe-JyQOJB2rcwl0jYrK_pOr_J8RNK4YRzq_I4WmRa4Pfox_aA/viewform?usp=sf_link
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['ID'],'pilot', expName, expInfo['date'])
  Experiment info = {'ID': '', 'practice': '1'}
  Full-screen window = True
  Monitor = AOC
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[0.804,0.804,0.961]
  expName = TerKepEsz-Encoding_MR
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Routines
  Routine start_encoding
    TextComponent start_encoding_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text [set every repeat]:
        Első feladat
        Galéria berendezés
    CodeComponent select_encoding_trials
      Code Type = Auto->JS
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      Begin Experiment:
        #tables = [0,1,2]
        #shuffle(tables)
        #trial_table = tables.pop()
        #trial_table = str(trial_table)
        trial_table = '0'
        stimuli_table = 'stimuli_tables/encoding_trials_'+ trial_table + '.csv'
    CodeComponent encoding_run_setup
      Code Type = Auto->JS
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      Begin Routine:
        start = 0
        end = 0
        step = 1
        n_runs = 3
        run_counter = 0
  Routine start_recognition
    CodeComponent recognition_run_setup
      Code Type = Auto->JS
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      Begin Routine:
        start = 0
        end = 0
        step = 1
        n_runs = 4
        run_counter = 0
    CodeComponent select_recognition_trials
      Code Type = Auto->JS
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      Begin Routine:
        stimuli_table = 'stimuli_tables/recognition_trials_'+ trial_table + '.csv'
    TextComponent start_recognition_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Második feladat
        Képfelismerés
  Routine start_enc_run
    CodeComponent create_enc_run
      Code Type = Auto->JS
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      Begin Routine:
        start = end
        end = start + 3
        selection = np.arange(start, end, step)
    CodeComponent enc_run_counter
      Code Type = Auto->JS
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      Begin Routine:
        run_counter = run_counter + 1
        end_run_text = 'Rövid szünet.'

        if run_counter >= 3:
            end_run_text = 'Vége az első feladatnak.'
    TextComponent start_enc_run_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Kezdődik a feladat...
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  Routine enc_trial
    CodeComponent get_size
      Code Type = Auto->JS
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      Begin Experiment:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_ratio = x_size/y_size
      Begin Routine:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
    ImageComponent enc_trial_interior
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = norm
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    ImageComponent enc_trial_main_image
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size [set every repeat] = (0.3125, 0.3125*scr_ratio)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = norm
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    KeyboardComponent enc_trial_key
      allowedKeys = 'b', 'c'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    CodeComponent enc_trial_timer
      Code Type = Both
      Begin JS Experiment:
        trial_start_time=0
        stimulus_start_time=0
      Each Frame:
        if frameN == 0: # start of the trial
            trial_start_time = globalClock.getTime() - trigger_time
            thisExp.addData('trial_start_time', trial_start_time)
        elif frameN == 1: # the zeroth frame has just been drawn
            stimulus_start_time = globalClock.getTime() - trigger_time
            # store the data:
            thisExp.addData('stimulus_start_time', stimulus_start_time)
      Each JS Frame:
        if ((frameN === 0)) {
            trial_start_time = (globalClock.getTime() - trigger_time);
            psychoJS.experiment.addData("trial_start_time", trial_start_time);
        } else {
            if ((frameN === 1)) {
                stimulus_start_time = (globalClock.getTime() - trigger_time);
                psychoJS.experiment.addData("stimulus_start_time", stimulus_start_time);
            }
        }
  Routine info
  Routine lab_introduction
    TextComponent lab_thanks
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120.0
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      text:
        Köszönjük, hogy hozzájárul kutatócsoportunk munkájához azzal, hogy részt vesz vizsgálatunkban!
    KeyboardComponent lab_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent lab_introduction_continue
      color = black
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 119.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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    ImageComponent lab_members
      image = stimuli/lab_members.jpg
      pos = (0, -0.3704)
      size = (0.9458, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120.0
      units = norm
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  Routine enc_instructions_1
    TextComponent enc_instructions_1_text
      color = black
      letterHeight = 0.03
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 0.65
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      text:
        Ön ennek a modern képgalériának a kurátora.

        A legújabb kiállításra a vártnál több kép érkezett.
        Kurátorként az Ön feladata lesz eldönteni, mely képeket válogatjuk be a kiállított darabok közé, és hogy a kép illeszkedik-e a galéria adott pontjára.

        Az Ön ideje nagyon drága a galériának, így a döntésre egy-egy képről csak 3 másodperce lesz.
    ImageComponent enc_instructions_1_image
      image = stimuli/GalleryBuildingFromOutside.jpg
      pos = (0.4688, 0.0)
      size = (0.625, 0.8333)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = norm
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    KeyboardComponent enc_instructions_1_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent instructions_1_continue
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja meg a gombot a jobb hüvelykujjával. 
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  Routine enc_instructions_2
    TextComponent enc_instructions_2_text
      color = black
      letterHeight = 0.03
      pos = (-0.35, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 0.5
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      text:
        Ez a kiállítóterem, nézze meg figyelmesen.

        A feladat során a képek a falra vetítve jelennek meg, azon a helyen, ahol kiállításra kerülhetnek. A képek előtt egy keresztet fog látni, ami jelzi a képek pontos helyét.

        Döntse el a képekről, hogy ki legyenek-e állítva a bemutatott helyen. A beválogatott képek száma nincsen korlátozva. Minden egyes képről Ön dönt. Ha több képet válogat be, mint amennyi a galériában elfér, akkor a képeket az év során felváltva állítjuk ki.

        Minden képet nézzen meg figyelmesen, és minden képre adjon választ.
    ImageComponent enc_instructions_2_image
      image = stimuli/GalleryInterior.png
      pos = (0.4427, 0)
      size = (0.7604, 0.8185)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = norm
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    KeyboardComponent enc_instructions_2_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent instructions_2_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a gombot a jobb hüvelyujjával. 
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  Routine enc_fx
    ImageComponent enc_fx_interior
      durationEstim = 1.5
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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    TextComponent enc_fx_cross
      color = black
      durationEstim = 1.5
      letterHeight = 0.1
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = +
      units = norm
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    KeyboardComponent enc_fx_key
      allowedKeys = 'b', 'c'
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
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    CodeComponent enc_fx_timer
      Code Type = Both
      Begin JS Experiment:
        loop_start_time = 0;
        fx_start_time = 0;
      Each Frame:
        if enc_trials.thisN == 0 and frameN == 0: # start of the loop
            loop_start_time = globalClock.getTime() - trigger_time
            thisExp.addData('loop_start_time', loop_start_time)
        elif frameN == 1: # the zeroth frame has just been drawn
            fx_start_time = globalClock.getTime() - trigger_time
            # store the data:
            thisExp.addData('fx_start_time', fx_start_time)
      Each JS Frame:
        if (((enc_trials.thisN === 0) && (frameN === 0))) {
            loop_start_time = (globalClock.getTime() - trigger_time);
            psychoJS.experiment.addData("loop_start_time", loop_start_time);
        } else {
            if ((frameN === 1)) {
                fx_start_time = (globalClock.getTime() - trigger_time);
                psychoJS.experiment.addData("fx_start_time", fx_start_time);
            }
        }
  Routine start_rec_run
    CodeComponent rec_run_counter
      Code Type = Auto->JS
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      Begin Routine:
        run_counter = run_counter + 1
        end_run_text = 'Szünet\nA feladat folytatáshoz nyomja le a jobb nyilat'

        if run_counter >= n_runs:
            end_run_text = 'Vége a második feladatnak. Felteszünk Önnek pár kérdést, majd megkapja a vizsgálat befejezését igazoló kódot.\nHaladjon tovább a jobb nyíllal.'
    TextComponent start_rec_run_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Kezdődik a feladat...
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  Routine end_rec_run
    TextComponent end_rec_run_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = $end_run_text
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    KeyboardComponent end_rec_run_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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  Routine rec_fx
    ImageComponent rec_fx_interior
      durationEstim = 1.5
      image = stimuli/GalleryInterior.png
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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    TextComponent rec_fx_cross
      color = black
      durationEstim = 1.5
      letterHeight = 0.1
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = +
      units = norm
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    KeyboardComponent rec_fx_key
      allowedKeys = 'f','j'
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
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    TextComponent rec_fx_text_block
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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      text [set every repeat]:
        $block_name
    TextComponent rec_fx_instructions_text
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = Jitter/1000
      text = [F - Régi]      [J - Új]
      units = norm
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  Routine rec_trial
    ImageComponent rec_trial_interior
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      units = norm
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    ImageComponent rec_trial_main_image
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size [set every repeat] = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      units = norm
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    KeyboardComponent rec_trial_key
      allowedKeys = 'f','j'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    TextComponent rec_trial_text_block
      color = black
      letterHeight = 0.05
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $block_name
      units = norm
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    TextComponent rec_trial_instructions_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = [F - Régi]      [J - Új]
      units = norm
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  Routine rec_instructions_1
    TextComponent rec_instructions_1_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        A következő feladatban ismét absztrakt képeket fog látni, és ezekről kell eldöntenie, látta-e őket az első, 'Galéria berendezés' feladataban, és hogy ugyanott látta-e őket.

        A feladatot két alfeladatra bontottuk. Az egyikben a képekről, a másikban a képek pozíciójáról kell döntenie.
    KeyboardComponent rec_instructions_1_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent rec_instructions_1_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine rec_instructions_2
    TextComponent rec_instructions2_text
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 1
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      text:
        A Kép nevű alfeladatban azt kell eldöntenie, látta-e már ezeket a képeket a 'Galéria berendezés' feladataban.

        Két csoportba oszthatóak a megjelenő képek:
         - Régi: Ezek a képek pontosan megegyeznek a 'Galéria berendezés' feladatban látott képek egyikével.
         - Új: Képek, amelyek nem jelentek meg a 'Galéria berendezés' feladatban. Ezek a képek lehetnek hasonlóak a korábban látottakhoz.

        Az Ön feladata, hogy eldöntse, melyik kép ugyanaz, mint a 'Galéria berendezés' feladatban, és melyik új.
        A döntésre 4 másodperce lesz.
        Minden képet nézzen meg figyelmesen, és minden képre adjon választ, akkor is, ha a döntés nehéz.

        Döntését így jelölje:
        Régi - F
        Új - J
    KeyboardComponent rec_instructions_2_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent rec_instructions_2_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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    TextComponent rec_instruction_2_title
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = 'Kép' alfeladat
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  Routine enc_instructions_3
    TextComponent enc_instructions_3_text
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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      text:
        Az első feladat nagyjából 25 percet vesz igénybe, közben két rövid szünettel.

        A jobb mutatóujjával jelölje azokat a képeket, amelyek maradhatnak a galériában, a bemutatott helyen.

        A bal mutatóujjával jelölje a képeket, amelyek nem maradnak kiállítva a bemutatott helyen.

        Most a gyakorló feladat következik.
    KeyboardComponent enc_instructions_3_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295
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    TextComponent enc_instructions_3_continue
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = Ha készen áll a gyakorlásra, nyomja meg a gombot a jobb hüvelykujjával.
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  Routine start_practice
    TextComponent start_practice_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Kezdődik a gyakorlás...
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    CodeComponent practice_value
      Code Type = Auto->JS
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      Begin Experiment:
        practice = int(expInfo['practice'])
  Routine end_practice
    TextComponent end_practice_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 0.8
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      text:
        Ez volt a gyakorlás. A feladat következik.
        A feladat során már nem kap visszajelzést a döntéséről.
    KeyboardComponent end_practice_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
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    TextComponent end_practice_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
      text = A folytatáshoz nyomja meg a gombot a jobb hüvelykujjával. 
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  Routine enc_practice_feedback
    CodeComponent enc_practice_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        response = enc_practice_trial_key.keys
        feedback_text = ''
        if response == 'b':
            feedback_text = 'Az Ön válasza:\nA kép nem marad.'
        elif response == 'c':
            feedback_text = 'Az Ön válasza:\nA kép marad.'
        else:
            feedback_text = 'Nem adott választ.'
    ImageComponent enc_practice_feedback_interior
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = norm
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    ImageComponent enc_practice_feedback_image
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size [set every repeat] = (0.3125, 0.3125*scr_ratio)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = norm
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    TextComponent enc_practice_feedback_text
      color = black
      letterHeight = 0.05
      pos [set every repeat] = (CurrentX, CurrentY - 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
      units = norm
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  Routine end_enc_run
    TextComponent end_enc_run_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text [set every repeat] = $end_run_text
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    KeyboardComponent enc_run_end_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 5
      stopVal [duration (s)] = 175
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    TextComponent enc_run_end_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 175
      text = A folytatáshoz nyomja meg a gombot a jobb hüvelykujjával. 
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  Routine rec_instructions_3
    TextComponent rec_instrauction_3_text
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 1
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      text:
        A Hely nevű alfeladatban azt kell eldöntenie, a képek a képernyő ugyanazon pontján jelennek-e meg, mint a 'Galéria berendezés' feladataban.
        Ebben az alfeladatban minden kép pontos mása annak, amit az első feladatban látott.

        A helyek azonban két csoportba oszthatóak:
         - Régi: Pontosan ugyanitt jelent meg ez a kép a 'Galéria berendezés' feladatban.
         - Új: Egy másik helyen jelent meg ez a kép a 'Galéria berendezés' feladatban. Ez a hely lehet közeli az eredeti helyhez.

        Az Ön feladata, hogy eldöntse, melyik kép jelent meg ugyanott, és melyik új helyen.
        A döntésre 4 másodperce lesz.
        Minden képet nézzen meg figyelmesen, és minden képre adjon választ, akkor is, ha a döntés nehéz.

        A döntését így jelölje:
        Régi - F
        Új - J
    KeyboardComponent rec_instructions_3_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 5
      stopVal [duration (s)] = 295
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    TextComponent rec_instructions_3_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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    TextComponent rec_instruction_3_title
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = 'Hely' alfeladat
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  Routine rec_instructions_4
    TextComponent rec_instructions_4_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        A következőkben pár példával mutatjuk be Önnek, milyen hasonlóak lehetnek az új képek és helyek.

        A bemutatóban elsőként egy, a 'Galéria berendezés' feladat során már látott képet/helyet mutatunk Önnek, 'Régi' felirattal.
        A régi képet/helyet mindig egy új kép/hely követi a bemutatóban, 'Új' felirattal.
    KeyboardComponent rec_instructions_4_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
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    TextComponent rec_instructions_4_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine start_rec_block
    CodeComponent start_block_code
      Code Type = Both
      Begin JS Routine:
        start = end;
        end = (start + 18);
        selection = Array.from({length: end - start}, (_, index) => index + start)
        if ((block_counter === 0)) {
            block_name = "K\u00e9p";
        } else {
            if ((TrialType === "LOC")) {
                block_name = "K\u00e9p";
            } else {
                block_name = "Hely";
            }
        }
        block_counter = (block_counter + 1);
      Begin Routine:
        start = end
        end = start + 3
        selection = np.arange(start,end, step)
        if block_counter == 0:
            block_name = "Kép"
        else:
            if TrialType == "LOC":
                block_name = "Kép"
            else:
                block_name = "Hely"
        block_counter = block_counter + 1
    TextComponent start_rec_block_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $block_name
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  Routine start_rec_block_3
  Routine start_rec_block_2
  Routine start_rec_practice_block
    CodeComponent start_rec_practice_code
      Code Type = Both
      Begin Experiment:
        rec_practice_block = [0,1,2]
        block_name = "Kép"
        block_counter = 0
      Begin JS Experiment:
        rec_practice_block = [0, 1, 2];
        block_name = "K\u00e9p";
        block_counter = 0;
      Begin JS Routine:
        block_counter = (block_counter + 1);
        if ((block_counter >= 2)) {
            rec_practice_block = [3, 4, 5];
            block_name = "Hely";
        }
      Begin Routine:
        block_counter = block_counter + 1
        if block_counter >= 2:
            rec_practice_block = [3,4,5]
            block_name = "Hely"
    TextComponent rec_practice_block_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $block_name
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  Routine rec_practice_feedback
    CodeComponent rec_practice_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        correct_response = ''
        if StimType == 'FOIL':
            correct_response = 'A helyes válasz: Új'
        elif StimType == 'LURE':
            correct_response = 'A helyes válasz: Új'
        elif StimType == 'TARGET':
            correct_response = 'A helyes válasz: Régi'

        response = ''
        if rec_trial_key.keys == 'f':
            response = 'Az Ön válasza: Régi'

        elif rec_trial_key.keys == 'j':
            response = 'Az Ön válasza: Új'

        feedback_text = correct_response +'\n'+ response
    TextComponent rec_practice_feedback_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $feedback_text
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  Routine experiment_information
    TextComponent experiment_information_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        Kérjük, figyelmesen olvassa végig az alábbi instrukciókat!

        A vizsgálathoz használjon asztali számítógépet vagy laptopot. A vizsgálat nem végezhető el mobil eszközön, például okostelefonon vagy táblagépen. A feladatok elvégzéséhez szüksége lesz működő billentyűzetre és stabil internet kapcsolatra. Az optimális eredmény elérése érdekében Google Chrome, Firefox vagy Safari böngésző használata javasolt. Kérjük, használja a teljes képernyő módot.
        A kísérlet teljes körű, zavartalan figyelmet igényel. A vizsgálat két feladatból áll, és elvégzése 50-60 percet vesz igénybe. Bizonyosodjon meg róla, hogy elég időt tud szánni a vizsgálatra. Ügyeljen arra, hogy telefont, vagy más eszközöket közben ne használjon, és kerülje a másokkal való interakciót.

        A vizsgálat két feladatból áll, melyek során absztrakt képeket kell kiválogatnia a megadott szempontok szerint. A feladatok alatt és a feladatok között is lesz lehetősége rövid pihenőt tartani.
    KeyboardComponent experiment_information_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 290.0
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    TextComponent experiment_information_continue
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 290.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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    CodeComponent consent_check
      Code Type = Auto->JS
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      Begin Experiment:
        proceed = False
        consent = expInfo['A vizsgálat feltételeibe beleegyezem. (igen/nem)*']
        dataprotection = expInfo['Az adatkezelési feltételeket elfogadom. (igen/nem)*']
        consent_ok = False
        data_ok = False

        if consent == 'igen' or consent == 'i' or consent == 'Igen' or consent == 'I':
            consent_ok = True

        if dataprotection == 'igen' or dataprotection == 'i' or dataprotection == 'Igen' or dataprotection == 'I':
            data_ok = True

        if consent_ok & data_ok:
            proceed = True

        if not proceed:
            core.quit()
  Routine end_experiment
    TextComponent end_experiment_text
      color = black
      letterHeight = 0.03
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        Köszönjük a részvételt!

        Jegyezze fel az alábbi kódot, amellyel a részvételét igazolja:
    CodeComponent generate_participant_code
      Code Type = Both
      Begin Experiment:
        code = np.random.randint(100000, high=999999)
      Begin JS Experiment:
        code = Math.floor(100000 + Math.random() * 900000)
    TextComponent end_experiment_code
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = $code
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    TextComponent end_experiment_continue
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 297.0
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      text:
        A jobb nyíl lenyomásával megjelenik a vizsgálat végét jelző üzenet. Ezt fogadja el az OK gombbal, majd átirányítjuk egy felületre, ahol a kód megadásával igazolni tudja a részvételét.
        Probléma esetén írjon nekünk a terkep@ttk.hu email címen.
    KeyboardComponent end_experiment_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 294.0
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  Routine start_MR
    TextComponent start_MR_text
      color = black
      durationEstim = 5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = A vizsgálatvezető indítja a szkennert...
      units = norm
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    KeyboardComponent start_MR_trigger
      allowedKeys = 's'
      durationEstim = 5.0
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent start_MR_timer
      Code Type = Auto->JS
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      Begin Experiment:
        trigger_key = 's'

        def get_current_trigger_time():
            trigger = globalClock.getTime() - trigger_time
            thisExp.addData('triggers', trigger)
            thisExp.nextEntry()
            return trigger

        trigger_time = 0
        event.globalKeys.add(key=trigger_key, func=get_current_trigger_time)
      End Routine:
        trigger_time = globalClock.getTime()
        thisExp.addData('trigger_time', trigger_time)
  Routine enc_practice_fx
    ImageComponent enc_practice_fx_interior
      durationEstim = 1.5
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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    TextComponent enc_practice_fx_cross
      color = black
      durationEstim = 1.5
      letterHeight = 0.1
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = +
      units = norm
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    KeyboardComponent enc_practice_fx_key
      allowedKeys = 'b', 'c'
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
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  Routine enc_practice_trial
    CodeComponent practice_get_size
      Code Type = Both
      Begin Experiment:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_ratio = x_size/y_size
      Begin JS Experiment:
        w_size = psychoJS.window.size;
        x_size = w_size[0];
        y_size = w_size[1];
        scr_ratio = (x_size / y_size);
      Begin JS Routine:
        w_size = psychoJS.window.size;

        x_size = w_size[0];
        y_size = w_size[1];

        scr_ratio = (x_size / y_size);
      Begin Routine:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_ratio = x_size/y_size
    ImageComponent enc_practice_trial_interior
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = norm
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    ImageComponent enc_practice_trial_main_image
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size [set every repeat] = (0.3125, 0.3125*scr_ratio)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = norm
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    KeyboardComponent enc_practice_trial_key
      allowedKeys = 'b', 'c'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine end_of_encoding
    TextComponent end_of_encoding_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120.0
      text = Most kivesszük Önt a szkennerből.
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    KeyboardComponent end_of_encoding_key
      allowedKeys = 'right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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Flow
  Routine start_encoding
  Routine enc_instructions_1
  Routine enc_instructions_2
  Routine enc_instructions_3
  Routine start_practice
  LoopInitiator enc_practice_trials loopType="TrialHandler"
    conditionsFile = stimuli_tables/encoding_practice_trials.csv
    loopType = sequential
    nReps = practice
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    conditions:
      [OrderedDict([('Task', 'EncodingPractice'), ('TrialType', 'LOC'), ('StimType', 'TARGET'), ('Order', 1), ('CurrentImage', 'stimuli/fractals/166a.jpg'), ('CurrentX', -300.0), ('CurrentY', 0.0), ('Jitter', 1500), ('Section', 'Encoding')]),
      OrderedDict([('Task', 'EncodingPractice'), ('TrialType', 'OBJ'), ('StimType', 'TARGET'), ('Order', 1), ('CurrentImage', 'stimuli/fractals/167a.jpg'), ('CurrentX', 300.0), ('CurrentY', 0.0), ('Jitter', 500), ('Section', 'Encoding')]),
      OrderedDict([('Task', 'EncodingPractice'), ('TrialType', 'LOC'), ('StimType', 'FOIL'), ('Order', 1), ('CurrentImage', 'stimuli/fractals/148b.jpg'), ('CurrentX', 212.1320344), ('CurrentY', 212.1320344), ('Jitter', 1000), ('Section', 'Encoding')]),
      OrderedDict([('Task', 'EncodingPractice'), ('TrialType', 'LOC'), ('StimType', 'LURE'), ('Order', 1), ('CurrentImage', 'stimuli/fractals/159a.jpg'), ('CurrentX', 0.0), ('CurrentY', 300.0), ('Jitter', 5000), ('Section', 'Encoding')]),
      OrderedDict([('Task', 'EncodingPractice'), ('TrialType', '-'), ('StimType', '-'), ('Order', 1), ('CurrentImage', 'stimuli/fractals/177b.jpg'), ('CurrentX', 300.0), ('CurrentY', 0.0), ('Jitter', 800), ('Section', 'Encoding')])]
    Routine enc_practice_fx
    Routine enc_practice_trial
    Routine enc_practice_feedback
  LoopTerminator enc_practice_trials
  Routine end_practice
  LoopInitiator enc_runs loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 3
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    Routine start_MR
    Routine start_enc_run
    LoopInitiator enc_trials loopType="TrialHandler"
      Selected rows = $selection
      conditionsFile = $stimuli_table
      loopType = sequential
      nReps = 1
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      Routine enc_fx
      Routine enc_trial
    LoopTerminator enc_trials
    Routine end_enc_run
  LoopTerminator enc_runs
  Routine end_of_encoding
