PsychoPy2experiment version="2020.2.10"
Settings
  Completed URL = https://docs.google.com/forms/d/e/1FAIpQLSe-JyQOJB2rcwl0jYrK_pOr_J8RNK4YRzq_I4WmRa4Pfox_aA/viewform?usp=sf_link
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['ID'],'pilot', expName, expInfo['date'])
  Experiment info = {'ID': '', 'Session': 'OBJ/LOC', 'Stimuli Table': '0', 'Practice': '1'}
  Full-screen window = True
  Monitor = NLL LCD
  Screen = 2
  Show mouse = True
  Units = height
  Use version = 2020.2
  Window size (pixels) = [1920, 1080]
  color = $[0.114,0.310,0.380]
  expName = TérKépÉsz
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Routines
  Routine filler_task
    CodeComponent select_math_problem
      Code Type = Auto->JS
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      Begin Experiment:
        problem1 = '14 + 26 = ?'
        solution1 = 'Bal mutatóujj: 48                Jobb mutatóujj: 40'
        correct1= 'b'

        problem2 = '3 * 15 = ?'
        solution2 = 'Bal mutatóujj: 74                Jobb mutatóujj: 45'
        correct2= 'b'

        problem3 = '120 / 10 = ?'
        solution3 = 'Bal mutatóujj: 12                Jobb mutatóujj: 16'
        correct3= 'c'

        problem4 = '21 + 15 = ?'
        solution4 = 'Bal mutatóujj: 42                Jobb mutatóujj: 36'
        correct4= 'c'

        problem5 = '6 * 8 = ?'
        solution5 = 'Bal mutatóujj: 48\t\t\tJobb mutatóujj: 38'
        correct5= 'b'

        problem6 = '105 / 5 = ?'
        solution6 = 'Bal mutatóujj: 21                Jobb mutatóujj: 28'
        correct6= 'c'
        print('problems created')

        math_problems = [problem1, problem2, problem3, problem4, problem5, problem6]
        print('problem list ok')
        math_solutions = [solution1,solution2,solution3,solution4,solution5, solution6]
        print('solution list list ok')
        math_correct = [correct1,correct2,correct3,correct4,correct5,correct6]
        print('corr list ok')
      Begin Routine:
        if expInfo['Session']=='1':
            i = run_counter - 1
        elif expInfo['Session']=='2':
            i = run_counter + 2
        problem = math_problems[i]
        solution = math_solutions[i]
        correct = math_correct[i]
    TextComponent math_problem
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text [set every repeat] = $problem
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    TextComponent math_solution
      color = black
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text [set every repeat] = $solution
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    KeyboardComponent filler_task_resp
      allowedKeys = 'b','c'
      correctAns = $correct
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      storeCorrect = True
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  Routine enc_trial
    CodeComponent get_size
      Code Type = Auto->JS
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      Begin Experiment:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
      Begin Routine:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
    ImageComponent enc_trial_interior
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = norm
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    ImageComponent enc_trial_main_image
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size [set every repeat] = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = norm
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    KeyboardComponent enc_trial_key
      allowedKeys = 'b', 'c'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent enc_trial_text_block
      color = black
      letterHeight = 0.08
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $block_name
      units = norm
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    TextComponent enc_trial_instructions_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = [BAL MUTATÓUJJ - Nem marad]      [JOBB MUTATÓUJJ - Marad]
      units = norm
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    CodeComponent enc_trial_timer
      Code Type = Auto->JS
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      Each Frame:
        if frameN == 0: # start of the trial
            trial_start_time = globalClock.getTime() - trigger_time
            thisExp.addData('enc_trial_start_time', trial_start_time)
        elif frameN == 1: # the zeroth frame has just been drawn
            stimulus_start_time = globalClock.getTime() - trigger_time
            # store the data:
            thisExp.addData('enc_stimulus_start_time', stimulus_start_time)
  Routine enc_instructions_1
    TextComponent enc_instructions_1_text
      color = black
      letterHeight = 0.03
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 0.65
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      text:
        Ön ennek a modern képgalériának a kurátora.

        A legújabb kiállításra a vártnál több kép érkezett.
        Kurátorként az Ön feladata lesz eldönteni, mely képeket válogatjuk be a kiállított darabok közé, és hogy a mások által beválogatott képek illeszkednek-e a galéria adott pontjára.

        Az Ön ideje nagyon drága a galériának, így a döntésre egy-egy képről csak 3 másodperce lesz.
    ImageComponent enc_instructions_1_image
      image = stimuli/GalleryBuildingFromOutside.jpg
      pos = (0.4688, 0.0)
      size = (0.625, 0.8333)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = norm
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    KeyboardComponent enc_instructions_1_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent instructions_1_continue
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a gombot a jobb hüvelykujjával. 
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  Routine enc_instructions_2
    TextComponent enc_instructions_2_text
      color = black
      letterHeight = 0.03
      pos = (-0.35, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 0.52
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      text:
        Ez a kiállítóterem, nézze meg figyelmesen.

        A feladat során a képek a falra vetítve jelennek meg. A képek előtt egy keresztet fog látni, ami jelzi a képek pontos helyét.

        A 'Kép' nevű alfeladat alatt döntse el a képekről, hogy ki legyenek-e állítva a galériában.

        A beválogatott képek száma nincsen korlátozva. Minden egyes képről Ön dönt.

        Ha több képet válogat be, mint amennyi a galériába fér, akkor a képeket az év során felváltva állítjuk ki.
    ImageComponent enc_instructions_2_image
      image = stimuli/GalleryInterior.png
      pos = (0.4427, 0)
      size = (0.7604, 0.8185)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = norm
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    KeyboardComponent enc_instructions_2_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent instructions_2_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a gombot a jobb hüvelykujjával. 
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  Routine enc_fx
    CodeComponent get_screen_size
      Code Type = Auto->JS
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      Begin Experiment:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
      Begin Routine:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
    ImageComponent enc_fx_interior
      durationEstim = 1.5
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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    TextComponent enc_fx_cross
      color = black
      durationEstim = 1.5
      letterHeight = 0.1
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = +
      units = norm
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    KeyboardComponent enc_fx_key
      allowedKeys = 'b', 'c'
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
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    TextComponent enc_fx_text_block
      color = black
      durationEstim = 1.5
      letterHeight = 0.08
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text [set every repeat] = $block_name
      units = norm
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    TextComponent enc_fx_instructions_text
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = [BAL MUTATÓUJJ - Nem marad]      [JOBB MUTATÓUJJ - Marad]
      units = norm
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    CodeComponent enc_fx_timer
      Code Type = Auto->JS
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      Each Frame:
        if enc_trials.thisN == 0 and frameN == 0: # start of the loop
            loop_start_time = globalClock.getTime() - trigger_time
            thisExp.addData('enc_loop_start_time', loop_start_time)
        elif frameN == 1: # the zeroth frame has just been drawn
            fx_start_time = globalClock.getTime() - trigger_time
            # store the data:
            thisExp.addData('enc_fx_start_time', fx_start_time)
  Routine start_rec_run
    CodeComponent rec_run_counter
      Code Type = Auto->JS
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      Begin Routine:
        run_counter = run_counter + 1
        end_run_text = 'Szünet\nA feladat folytatáshoz nyomja le a gombot a jobb hüvelykujjával'

        if run_counter >= n_runs:
            end_run_text = 'Vége a második feladatnak. Felteszünk Önnek pár kérdést, majd megkapja a vizsgálat befejezését igazoló kódot.\nHaladjon tovább a jobb nyíllal.'
    TextComponent start_rec_run_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Kezdődik a feladat...
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  Routine end_rec_run
    TextComponent end_rec_run_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = $end_run_text
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    KeyboardComponent end_rec_run_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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  Routine rec_trial
    ImageComponent rec_trial_interior
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      units = norm
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    ImageComponent rec_trial_main_image
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size [set every repeat] = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      units = norm
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    KeyboardComponent rec_trial_key
      allowedKeys = 'b','c'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    TextComponent rec_trial_text_block
      color = black
      letterHeight = 0.08
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $block_name
      units = norm
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    TextComponent rec_trial_instructions_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = [BAL MUTATÓUJJ - Régi]      [JOBB MUTATÓUJJ - Új]
      units = norm
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    CodeComponent rec_trial_timer
      Code Type = Auto->JS
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      Each Frame:
        if frameN == 0: # start of the trial
            trial_start_time = globalClock.getTime() - trigger_time
            thisExp.addData('rec_trial_start_time', trial_start_time)
        elif frameN == 1: # the zeroth frame has just been drawn
            stimulus_start_time = globalClock.getTime() - trigger_time
            # store the data:
            thisExp.addData('rec_stimulus_start_time', stimulus_start_time)
  Routine rec_instructions_1
    TextComponent rec_instructions_1_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        A Képfelismerés feladatban ismét absztrakt képeket fog látni, és ezekről kell eldöntenie, látta-e őket a megelőző Galériaberendezés feladataban, és hogy ugyanott látta-e őket.

        A feladatot két alfeladatra bontottuk. Az egyikben a képekről, a másikban a képek pozíciójáról kell döntenie.
    KeyboardComponent rec_instructions_1_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent rec_instructions_1_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a gombot a jobb hüvelykujjával. 
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  Routine rec_instructions_2
    TextComponent rec_instructions2_text
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 1
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      text:
        A 'Kép' nevű alfeladatban azt kell eldöntenie, látta-e már ezeket a képeket a megelőző Galériaberendezés blokkban.

        Két csoportba oszthatóak a megjelenő képek:
         - Régi: Ezek a képek pontosan megegyeznek a 'Galériaberendezés' megelőző sorozatában látott képek egyikével.
         - Új: Képek, amelyek nem jelentek meg a 'Galériaberendezés' feladatban. Ezek a képek lehetnek hasonlóak a korábban látottakhoz.

        Az Ön feladata, hogy eldöntse, melyik kép ugyanaz, mint a 'Galéria berendezés' feladatban, és melyik új.
        A döntésre 4 másodperce lesz.
        Minden képet nézzen meg figyelmesen, és minden képre adjon választ, akkor is, ha a döntés nehéz.

        Döntését így jelölje:
        Régi - BAL MUTATÓUJJ
        Új - JOBB MUTATÓUJJ
    KeyboardComponent rec_instructions_2_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent rec_instructions_2_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a gombot a jobb hüvelykujjával. 
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    TextComponent rec_instruction_2_title
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = 'Kép' alfeladat
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  Routine start_practice
    TextComponent start_practice_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Kezdődik a gyakorlás...
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    CodeComponent reset_practice_block
      Code Type = Auto->JS
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      Begin Routine:
        practice_start = 0
        practice_end = 0
  Routine end_practice
    TextComponent end_practice_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600.0
      text = Ez volt a gyakorlás.
      wrapWidth = 0.8
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    KeyboardComponent end_practice_key
      allowedKeys = 'd', 'left'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 599.0
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    CodeComponent end_practice_block_counter
      Code Type = Auto->JS
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      Begin Routine:
        block_counter = 0
    TextComponent end_practice_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 599.0
      text = A folytatáshoz nyomja le a gombot a jobb hüvelykujjával. 
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    TextComponent coming_up_next_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600.0
      text [set every repeat] = A feladat következik. A feladat során már nem kap visszajelzést. 
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  Routine enc_practice_feedback
    CodeComponent enc_practice_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        response = enc_trial_key_practice.keys
        feedback_text = ''
        if response == 'b':
            feedback_text = 'Az Ön válasza:\nA kép nem marad.'
        elif response == 'c':
            feedback_text = 'Az Ön válasza:\nA kép marad.'
        else:
            feedback_text = 'Nem adott választ.'
    ImageComponent enc_practice_feedback_interior
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = norm
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    ImageComponent enc_practice_feedback_image
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size [set every repeat] = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = norm
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    TextComponent enc_practice_feedback_text
      color = black
      letterHeight = 0.05
      pos [set every repeat] = (CurrentX, CurrentY - 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
      units = norm
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    TextComponent enc_practice_feedback_block
      color = black
      letterHeight = 0.08
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $block_name
      units = norm
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  Routine rec_instructions_3
    TextComponent rec_instrauction_3_text
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 1
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      text:
        A 'Hely' nevű alfeladatban azt kell eldöntenie, a képek a képernyő ugyanazon pontján jelennek-e meg, mint a megelőző Galériaberendezés sorozatban.
        Ebben az alfeladatban minden kép pontos mása annak, amit a Galériaberendezés alatt látott.

        A helyek azonban két csoportba oszthatóak:
         - Régi: Pontosan ugyanitt jelent meg ez a kép a Galériaberendezés feladatban.
         - Új: Egy másik helyen jelent meg ez a kép a Galériaberendezés feladatban. Ez a hely lehet közeli az eredeti helyhez.

        Az Ön feladata, hogy eldöntse, melyik kép jelent meg ugyanott, és melyik új helyen.
        A döntésre 4 másodperce lesz.
        Minden képet nézzen meg figyelmesen, és minden képre adjon választ, akkor is, ha a döntés nehéz.

        A döntését így jelölje:
        Régi - BAL MUTATÓUJJ
        Új - JOBB MUTATÓUJJ
    KeyboardComponent rec_instructions_3_key
      forceEndRoutine = True
      startVal [time (s)] = 5
      stopVal [duration (s)] = 295
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    TextComponent rec_instructions_3_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a gombot a jobb hüvelykujjával. 
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    TextComponent rec_instruction_3_title
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = 'Hely' alfeladat
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  Routine demo
    ImageComponent demo_interior
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = norm
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    ImageComponent demo_main_image
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size [set every repeat] = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = norm
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    ImageComponent demo_image
      image [set every repeat] = $DemoImage
      pos [set every repeat] = (DemoX, DemoY)
      size [set every repeat] = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = norm
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    TextComponent demo_text
      color = black
      letterHeight = 0.05
      pos = (-0.025, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = $DemoText
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    KeyboardComponent demo_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 298
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    TextComponent demo_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 298.0
      text = A folytatáshoz nyomja le a gombot a jobb hüvelykujjával. 
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  Routine demo_end
    TextComponent demo_end_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Ez volt a bemutató. Most a Képfelismerés gyakorlása következik.
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    KeyboardComponent demo_end_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
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    TextComponent demo_end_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
      text = A folytatáshoz nyomja le a gombot a jobb hüvelykujjával. 
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    CodeComponent demo_end_set_text
      Code Type = Auto->JS
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      End Routine:
        coming_up_text='Most a két feladattípus együttes gyakorlása következik.'
  Routine start_rec_block_3
  Routine start_rec_block_2
  Routine start_rec_practice_block
    CodeComponent start_rec_practice_code
      Code Type = Both
      Begin Experiment:
        rec_practice_block = [0,1,2]
        block_name = "Kép"
        block_counter = 0
      Begin JS Experiment:
        rec_practice_block = [0, 1, 2];
        block_name = "K\u00e9p";
        block_counter = 0;
      Begin JS Routine:
        block_counter = (block_counter + 1);
        if ((block_counter >= 2)) {
            rec_practice_block = [3, 4, 5];
            block_name = "Hely";
        }
      Begin Routine:
        block_counter = block_counter + 1
        if block_counter >= 2:
            rec_practice_block = [3,4,5]
            block_name = "Hely"
    TextComponent rec_practice_block_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $block_name
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  Routine rec_practice_feedback
    CodeComponent rec_practice_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        correct_response = ''
        if StimType == 'FOIL':
            correct_response = 'A helyes válasz: Új'
        elif StimType == 'LURE':
            correct_response = 'A helyes válasz: Új'
        elif StimType == 'TARGET':
            correct_response = 'A helyes válasz: Régi'

        response = ''
        if rec_trial_key_practice.keys == 'b':
            response = 'Az Ön válasza: Régi'

        elif rec_trial_key_practice.keys == 'c':
            response = 'Az Ön válasza: Új'

        feedback_text = correct_response +'\n'+ response
    TextComponent rec_practice_feedback_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $feedback_text
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  Routine end_experiment
    TextComponent end_experiment_text
      color = black
      letterHeight = 0.03
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        Köszönjük a részvételt!

        Jegyezze fel az alábbi kódot, amellyel a részvételét igazolja:
    CodeComponent generate_participant_code
      Code Type = Both
      Begin Experiment:
        code = np.random.randint(100000, high=999999)
      Begin JS Experiment:
        code = Math.floor(100000 + Math.random() * 900000)
    TextComponent end_experiment_code
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = $code
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    TextComponent end_experiment_continue
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 297.0
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      text:
        A jobb nyíl lenyomásával megjelenik a vizsgálat végét jelző üzenet. Ezt fogadja el az OK gombbal, majd átirányítjuk egy felületre, ahol a kód megadásával igazolni tudja a részvételét.
        Probléma esetén írjon nekünk a terkep@ttk.hu email címen.
    KeyboardComponent end_experiment_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 294.0
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  Routine demo_start
    TextComponent demo_start_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Kezdődik a bemutató...
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  Routine start_run
    CodeComponent run_counter
      Code Type = Auto->JS
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      Begin Experiment:
        run_counter = 0
      Begin Routine:
        run_counter = run_counter + 1
        end_run_text = 'Rövid szünet.\n\nA feladat folytatáshoz nyomja le a gombot a jobb hüvelykujjával.'

        if run_counter == 3:
            end_run_text = 'Vége a feladatnak. A folytatáshoz nyomja le a gombot a jobb hüvelykujjával.'
    TextComponent start_enc_run_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Kezdődik a feladat...
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  Routine end_run
    TextComponent end_enc_run_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1200
      text [set every repeat] = $end_run_text
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    KeyboardComponent enc_run_end_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1200
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  Routine encoding_title
    TextComponent encoding_title_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Galéria berendezés
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  Routine recognition_title
    TextComponent start_recognition_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Képfelismerés
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  Routine practice_block_start
    CodeComponent create_practice_block
      Code Type = Both
      Begin Experiment:
        practice_start = 0
        if session == 2:
            practice_start = 3
        step = 1
      Begin JS Experiment:
        practice_end = 0;
        step = 1;
      Begin JS Routine:
        practice_start = practice_end;
        practice_end = (practice_start + 3);
        practice_selection = Array.from({length: practice_end - practice_start}, (_, index) => index + practice_start);
        block_name = "";
        if ((TrialType === "OBJ")) {
            block_name = "K\u00e9p";
        } else {
            if ((TrialType === "LOC")) {
                block_name = "Hely";
            } else {
                block_name = "Block Unknown";
            }
        }
      Begin Routine:
        practice_end = practice_start + 2
        practice_selection = np.arange(practice_start, practice_end, step)
    TextComponent practice_block_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Galériaberendezés
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  Routine general_instructions_2
    KeyboardComponent general_instructions_key_2
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent general_instructions_continue_2
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a gombot a jobb hüvelykujjával. 
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    TextboxComponent obj_title
      anchor = top-center
      bold = True
      color = black
      editable = False
      letterHeight = 0.05
      padding = None
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = 'Kép' körök
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    TextboxComponent obj_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.03
      padding = None
      pos = (0, -0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        Galériaberendezés:
        A bemutatott képet beválogatja a következő kiállításra?

        Jobb mutatóujj - Beválogat
        Bal mutatóujj - Nem válogat be

        -----------------------------------------------------------------------

        Képfelismerés:
        Pontosan megegyezik a bemutatott kép a Galériaberendezés feladatban látott képek egyikével?

        Jobb mutatóujj - Új kép
        Bal mutatóujj - Régi kép
  Routine general_instructions_1
    TextComponent general_instructions_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = height
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      text:
        A Képválogatás és Képfelismerés feladatok következnek.
    KeyboardComponent general_instructions_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent general_instructions_continue
      color = black
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 297.0
      text = A folytatáshoz nyomja le a gombot a jobb hüvelykujjával. 
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  Routine init_blocks
    CodeComponent name_block
      Code Type = Auto->JS
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      Begin Routine:
        block_name = ''
        if TrialType=='OBJ':
            block_name='Kép'
        elif TrialType=='LOC':
            block_name='Hely'
        else:
            block_name='Block Unknown'
    CodeComponent create_rec_block
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['Session']=='1':
            rec_end = 0;
        elif expInfo['Session']=='2':
            rec_end = 72;
        else:
            rec_end = 0;
            psychopy.logging.log('Starting REC trials from 0', logging.CRITICAL)
      Begin Routine:
        rec_start = rec_end
        rec_end = rec_start + 36
        rec_selection = np.arange(rec_start,rec_end, step)
    CodeComponent create_enc_block
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['Session']=='1':
            enc_end = 0;
        elif expInfo['Session']=='2':
            enc_end = 152;
        else:
            enc_end = 0;
            psychopy.logging.log('Starting ENC trials from 0', logging.CRITICAL)
      Begin Routine:
        enc_start = enc_end
        enc_end = enc_start + 76
        enc_selection = np.arange(enc_start, enc_end, step)
  Routine general_instructions_3
    KeyboardComponent general_instructions_key_3
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent general_instructions_continue_3
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a gombot a jobb hüvelykujjával. 
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    TextboxComponent loc_title
      anchor = top-center
      bold = True
      color = black
      editable = False
      letterHeight = 0.05
      padding = None
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = 'Hely' körök
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    TextboxComponent loc_text
      bold = False
      color = black
      editable = False
      letterHeight = 0.03
      padding = None
      pos = (0, -0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        Galériaberendezés:
        A Galériának ezen a pontján legyen kiállítva a bemutatott kép?

        Jobb mutatóujj - Ezen a helyen maradjon
        Bal mutatóujj - Ne ezen a helyen maradjon

        -----------------------------------------------------------------------

        Képfelismerés:
        A képernyő ugyanezen pontján látta a Galériaberendezés során a bemutatott képet?

        Jobb mutatóujj - Új hely
        Bal mutatóujj - Régi hely
  Routine enc_instructions_4
    TextComponent enc_instructions_3_text
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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      text:
        A 'Kép' alfeladat alatt a JOBB MUATÓUJJÁVAL jelölje azokat a képeket, amelyeket beválogat a kiállításra.

        A BAL MUTATÓUJJÁVAL jelölje a képeket, amelyeket nem válogat be a kiállításra.


        A 'Hely' nevű alfeladatban a JOBB MUATÓUJJÁVAL jelölje azokat a képeket, amelyek maradhatnak a galéria adott pontján.

        A BAL MUTATÓUJJÁVAL jelölje a képeket, amelyek nem maradhatnak a galéria adott pontján.

        Most a Képfelismerés feladat bemutatása következik.
    KeyboardComponent enc_instructions_3_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295
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    TextComponent enc_instructions_3_continue
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a gombot a jobb hüvelykujjával.
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    CodeComponent enc_instructions_set_text
      Code Type = Auto->JS
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      End Routine:
        coming_up_text='Most a Képfelismerés feladat bemutatása következik.'
  Routine enc_instructions_3
    TextComponent enc_instructions_2_text_2
      color = black
      letterHeight = 0.03
      pos = (-0.35, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 0.52
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      text:
        A 'Hely' nevű alfeladat alatt azt döntse el, a bemutatott kép maradhat-e a galéria adott pontján.
        Ezeket a képeket mindenképp kiállítjuk, itt csak a képek helyéről tud dönteni.

        Minden képet nézzen meg figyelmesen, és minden képre adjon választ.
    ImageComponent enc_instructions_2_image_2
      image = stimuli/GalleryInterior.png
      pos = (0.4427, 0)
      size = (0.7604, 0.8185)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = norm
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    KeyboardComponent enc_instructions_2_key_2
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent instructions_2_continue_2
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a gombot a jobb hüvelykujjával. 
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  Routine block_title
    TextComponent block_title_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $block_name
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  Routine wait_for_last_scan
    TextComponent wait_for_last_scan_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600.0
      text = A vizsgálatvezető előkészíti a szkennert.
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    KeyboardComponent wait_for_last_scan_continue
      allowedKeys = 'right', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 599
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    CodeComponent prepare_MR_code
      Code Type = Auto->JS
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      Begin Routine:
        print('Experimenter: Ready for scanning? Hit SPACE or -> to continue.')
        sys.stdout.flush()
  Routine start_MR
    CodeComponent start_MR_timer
      Code Type = Auto->JS
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      Begin Experiment:
        trigger_key = 's'
        def get_trigger_time(*args):
            trigger = globalClock.getTime() - args[0]
            thisExp.addData('trigger', trigger)
            thisExp.nextEntry()
      Begin Routine:
        print('Experimenter: Waiting for trigger. Start scanning...')
        sys.stdout.flush()
      End Routine:
        trigger_time = globalClock.getTime()
        thisExp.addData('trigger_time', trigger_time)
        if enc_end==0 or enc_end==150:
            event.globalKeys.add(key=trigger_key,
                                                   func=get_trigger_time,
                                                   func_args=[trigger_time])
        print('Trigger recieved.')
    TextComponent start_MR_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1200.0
      text = A vizsgálatvezető indítja a szkennert.
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    KeyboardComponent MR_trigger
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1200.0
      store = first key
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  Routine experiment_setup
    CodeComponent logging_setup
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible = False
        print('Mouse disabled on screen. Keep CMD window active!')
        practice = int(expInfo['Practice'])
        if practice ==0:
            print('Skipping Practice')
        else:
            print('Practice ON')
      Begin Routine:
        logging.setDefaultClock(globalClock)
    CodeComponent select_files
      Code Type = Both
      Begin Experiment:
        trial_table = expInfo['Stimuli Table']

        enc_table = 'stimuli_tables/encoding_trials_'+ trial_table + '.csv'
        rec_table = 'stimuli_tables/recognition_trials_'+ trial_table + '.csv'
      Begin JS Experiment:
        tables = ["0","1","2"];
        trial_table = tables[Math.floor(Math.random() * tables.length)];

        enc_table = (("stimuli_tables/encoding_trials_" + trial_table) + ".csv");
        rec_table = (("stimuli_tables/recognition_trials_" + trial_table) + ".csv");
    CodeComponent block_names
      Code Type = Auto->JS
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      Begin Experiment:
        session = expInfo['Session']
        if session == 'OBJ':
            block_name_selection=[1, 76]
            end_text = 'Vége a feladatnak. Most kivesszük Önt a szkennerből.'
            print('First session starting...')
        elif session == 'LOC':
            block_name_selection=[152,228]
            end_text = 'Vége a  mérésnek. Most kivesszük Önt a szkennerből.'
            print('Second session starting...')
        else:
            block_name_selection=[1,76]
            end_text = 'Vége a feladatnak. '
            print('Invalid Session Number!')

        sys.stdout.flush()
    ImageComponent welcome_image
      image = stimuli/terkepesz.png
      pos = (0, -100)
      size = (309,665)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = pix
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    TextComponent welcome_text
      color = black
      letterHeight = 50
      pos = (0, 350)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = TérKépÉsz Feladatok
      units = pix
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    CodeComponent set_instruction_text
      Code Type = Auto->JS
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      Begin Experiment:
        instruction_text = ''
        if session == 'OBJ':
            instruction_text = "A Galériaberendezés alatt azt döntse el, beválogatja-e a képet a kiállításra.\
                                \n\n\t\tJobb mutatóujj - Igen\n\t\tBal mutatóujj - Nem\
                                \n-----------------------------------------------------------------------\
                                \nA Képfelismerés allatt azt döntse el, látta-e már pontosan ugyanezt a képet a Galériaberendezés alatt.\
                                \n\n\t\tJobb mutatóujj - Új\
                                \n\t\tBal mutatóujj - Régi"
        elif session == 'LOC':
            instruction_text = "A Galériaberendezés alatt azt döntse el, maradhat-e a kép a bemutatott helyen.\
                                \n\n\t\tJobb mutatóujj - Igen\n\t\tBal mutatóujj - Nem\
                                \n-----------------------------------------------------------------------\
                                \nA Helyfelismerés allatt azt döntse el, pontosan ezen a helyen látta-e a képet.\
                                \n\n\t\tJobb mutatóujj - Új\n\t\tBal mutatóujj - Régi"
  Routine enc_fx_practice
    CodeComponent get_screen_size_practice
      Code Type = Auto->JS
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      Begin Experiment:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
      Begin Routine:
        block_name = ''
        if TrialType=='OBJ':
            block_name='Kép'
        elif TrialType=='LOC':
            block_name='Hely'
        else:
            block_name='Block Unknown'
    ImageComponent enc_fx_interior_practice
      durationEstim = 1.5
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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    TextComponent enc_fx_cross_practice
      color = black
      durationEstim = 1.5
      letterHeight = 0.1
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = +
      units = norm
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    KeyboardComponent enc_fx_key_practice
      allowedKeys = 'b', 'c'
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
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    TextComponent enc_fx_text_block_practice
      color = black
      durationEstim = 1.5
      letterHeight = 0.08
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text [set every repeat] = $block_name
      units = norm
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    TextComponent enc_fx_instructions_text_practice
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = [BAL MUTATÓUJJ - Nem marad]      [JOBB MUTATÓUJJ - Marad]
      units = norm
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  Routine enc_trial_practice
    CodeComponent get_size_practice
      Code Type = Auto->JS
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      Begin Experiment:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
      Begin Routine:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
    ImageComponent enc_trial_interior_practice
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = norm
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    ImageComponent enc_trial_main_image_practice
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size [set every repeat] = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = norm
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    KeyboardComponent enc_trial_key_practice
      allowedKeys = 'b', 'c'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent enc_trial_text_block_practice
      color = black
      letterHeight = 0.08
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $block_name
      units = norm
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    TextComponent enc_trial_instructions_text_practice
      color = black
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = [BAL MUTATÓUJJ - Nem marad]      [JOBB MUTATÓUJJ - Marad]
      units = norm
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  Routine rec_fx
    CodeComponent screen_size
      Code Type = Auto->JS
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      Begin Experiment:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
      Begin Routine:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
    ImageComponent rec_fx_interior
      durationEstim = 1.5
      image = stimuli/GalleryInterior.png
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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    TextComponent rec_fx_cross
      color = black
      durationEstim = 1.5
      letterHeight = 0.1
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = +
      units = norm
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    KeyboardComponent rec_fx_key
      allowedKeys = 'b','c'
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
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    TextComponent rec_fx_text_block
      color = black
      durationEstim = 1.5
      letterHeight = 0.08
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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      text [set every repeat]:
        $block_name
    TextComponent rec_fx_instructions_text
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = Jitter/1000
      text = [BAL MUTATÓUJJ - Régi]      [JOBB MUTATÓUJJ - Új]
      units = norm
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    CodeComponent rec_fx_timer
      Code Type = Auto->JS
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      Each Frame:
        if rec_trials.thisN == 0 and frameN == 0: # start of the loop
            loop_start_time = globalClock.getTime() - trigger_time
            thisExp.addData('rec_loop_start_time', loop_start_time)
        elif frameN == 1: # the zeroth frame has just been drawn
            fx_start_time = globalClock.getTime() - trigger_time
            # store the data:
            thisExp.addData('rec_fx_start_time', fx_start_time)
  Routine rec_fx_practice
    CodeComponent screen_size_practice
      Code Type = Auto->JS
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      Begin Experiment:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
      Begin Routine:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
    ImageComponent rec_fx_interior_practice
      durationEstim = 1.5
      image = stimuli/GalleryInterior.png
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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    TextComponent rec_fx_cross_practice
      color = black
      durationEstim = 1.5
      letterHeight = 0.1
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = +
      units = norm
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    KeyboardComponent rec_fx_key_practice
      allowedKeys = 'b','c'
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
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    TextComponent rec_fx_text_block_practice
      color = black
      durationEstim = 1.5
      letterHeight = 0.08
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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      text [set every repeat]:
        $block_name
    TextComponent rec_fx_instructions_text_practice
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = Jitter/1000
      text = [BAL MUTATÓUJJ - Régi]      [JOBB MUTATÓUJJ - Új]
      units = norm
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  Routine end_session
    TextComponent inter_task_break_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 1195.0
      text = A folytatáshoz nyomja le a gombot a jobb hüvelykujjával.
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    TextComponent inter_task_break_text
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1200.0
      text [set every repeat] = $end_text
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    KeyboardComponent inter_task_break_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 1195
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  Routine rec_trial_practice
    ImageComponent rec_trial_interior_practice
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      units = norm
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    ImageComponent rec_trial_main_image_practice
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size [set every repeat] = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      units = norm
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    KeyboardComponent rec_trial_key_practice
      allowedKeys = 'b','c'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    TextComponent rec_trial_text_block_practice
      color = black
      letterHeight = 0.08
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $block_name
      units = norm
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    TextComponent rec_trial_instructions_text_practice
      color = black
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = [BAL MUTATÓUJJ - Régi]      [JOBB MUTATÓUJJ - Új]
      units = norm
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  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text
  Routine encoding_baseline
    CodeComponent get_screen_size_2
      Code Type = Auto->JS
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      Begin Experiment:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
      Begin Routine:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
    ImageComponent encoding_baseline_interior
      durationEstim = 1.5
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      units = norm
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    TextComponent encoding_baseline_text_block
      color = black
      durationEstim = 1.5
      letterHeight = 0.08
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $block_name
      units = norm
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    TextComponent encoding_baseline_instructions_text
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = [BAL MUTATÓUJJ - Nem marad]      [JOBB MUTATÓUJJ - Marad]
      units = norm
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  Routine recognition_baseline
    CodeComponent screen_size_2
      Code Type = Auto->JS
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      Begin Experiment:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
      Begin Routine:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
    ImageComponent recognition_baseline_interior
      durationEstim = 1.5
      image = stimuli/GalleryInterior.png
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = norm
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    TextComponent recognition_baseline_text_block
      color = black
      durationEstim = 1.5
      letterHeight = 0.08
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = norm
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      text [set every repeat]:
        $block_name
    TextComponent recognition_baseline_instructions_text
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = [BAL MUTATÓUJJ - Régi]      [JOBB MUTATÓUJJ - Új]
      units = norm
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  Routine general_instructions
    KeyboardComponent general_instructions_4_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
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    TextComponent general_instructions_4_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
      text = A gyakorláshoz nyomja le a gombot a jobb hüvelykujjával. 
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    TextComponent general_instructions_4_text
      color = black
      letterHeight = 0.03
      pos = (0, -0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = $instruction_text
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Flow
  Routine experiment_setup
  Routine general_instructions
  Routine start_practice
  Routine practice_block_start
  LoopInitiator enc_full_practice loopType="TrialHandler"
    Selected rows = $practice_selection
    conditionsFile = stimuli_tables/encoding_full_practice_trials.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('TrialIndex', 1), ('Jitter', 800), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/170a.jpg'), ('CurrentX', 0.078125), ('CurrentY', -0.138888888888889), ('TripletMemberA', 'stimuli/fractals/170a.jpg'), ('TripletMemberB', 'stimuli/fractals/170b.jpg'), ('TripletMemberC', 'stimuli/fractals/170c.jpg'), ('Xcoordinate', 0.078125), ('Ycoordinate', -0.138888888888889), ('Xcoordinate_lure1', 0.234375), ('Ycoordinate_lure1', -0.138888888888889), ('Xcoordinate_lure2', -0.078125), ('Ycoordinate_lur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,
      OrderedDict([('TrialIndex', 2), ('Jitter', 4000), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'TARGET'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/171a.jpg'), ('CurrentX', 0.390625), ('CurrentY', 0.4166666666666671), ('TripletMemberA', 'stimuli/fractals/171a.jpg'), ('TripletMemberB', 'stimuli/fractals/171b.jpg'), ('TripletMemberC', 'stimuli/fractals/171c.jpg'), ('Xcoordinate', 0.390625), ('Ycoordinate', 0.4166666666666671), ('Xcoordinate_lure1', 0.234375), ('Ycoordinate_lure1', 0.4166666666666671), ('Xcoordinate_lure2', 0.390625), ('Ycoordinate_lu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,
      OrderedDict([('TrialIndex', 3), ('Jitter', 2000), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'FOIL'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/172a.jpg'), ('CurrentX', -0.390625), ('CurrentY', -0.138888888888889), ('TripletMemberA', 'stimuli/fractals/172a.jpg'), ('TripletMemberB', 'stimuli/fractals/172b.jpg'), ('TripletMemberC', 'stimuli/fractals/172c.jpg'), ('Xcoordinate', -0.390625), ('Ycoordinate', -0.138888888888889), ('Xcoordinate_lure1', -0.234375), ('Ycoordinate_lure1', -0.138888888888889), ('Xcoordinate_lure2', -0.390625), ('Ycoordinate_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,
      OrderedDict([('TrialIndex', 4), ('Jitter', 1000), ('ScannerRun', 1), ('BlockNr', 2), ('TrialType', 'LOC'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/173a.jpg'), ('CurrentX', 0.078125), ('CurrentY', 0.4166666666666671), ('TripletMemberA', 'stimuli/fractals/173a.jpg'), ('TripletMemberB', 'stimuli/fractals/173b.jpg'), ('TripletMemberC', 'stimuli/fractals/173c.jpg'), ('Xcoordinate', 0.078125), ('Ycoordinate', 0.4166666666666671), ('Xcoordinate_lure1', 0.078125), ('Ycoordinate_lure1', 0.138888888888889), ('Xcoordinate_lure2', -0.078125), ('Ycoordinate_lure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
    Routine enc_fx_practice
    Routine enc_trial_practice
    Routine enc_practice_feedback
  LoopTerminator enc_full_practice
  Routine recognition_title
  LoopInitiator rec_full_practice loopType="TrialHandler"
    Selected rows = $practice_selection
    conditionsFile = stimuli_tables/recognition_full_practice_trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('TrialIndex', 1), ('Jitter', 800), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/177c.jpg'), ('CurrentX', 0.078125), ('CurrentY', -0.13888888900000002), ('TripletMemberA', 'stimuli/fractals/170a.jpg'), ('TripletMemberB', 'stimuli/fractals/170b.jpg'), ('TripletMemberC', 'stimuli/fractals/170c.jpg'), ('Xcoordinate', 0.078125), ('Ycoordinate', -0.41666666700000005), ('Xcoordinate_lure1', -0.078125), ('Ycoordinate_lure1', -0.41666666700000005), ('Xcoordinate_lure2', 0.234375), ('Ycoordina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,
      OrderedDict([('TrialIndex', 2), ('Jitter', 4000), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'TARGET'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/178a.jpg'), ('CurrentX', 0.390625), ('CurrentY', 0.41666666700000005), ('TripletMemberA', 'stimuli/fractals/171a.jpg'), ('TripletMemberB', 'stimuli/fractals/171b.jpg'), ('TripletMemberC', 'stimuli/fractals/171c.jpg'), ('Xcoordinate', 0.390625), ('Ycoordinate', 0.41666666700000005), ('Xcoordinate_lure1', 0.234375), ('Ycoordinate_lure1', 0.41666666700000005), ('Xcoordinate_lure2', 0.390625), ('Ycoordinate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,
      OrderedDict([('TrialIndex', 3), ('Jitter', 2000), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/179c.jpg'), ('CurrentX', 0.234375), ('CurrentY', 0.13888888900000002), ('TripletMemberA', 'stimuli/fractals/172a.jpg'), ('TripletMemberB', 'stimuli/fractals/172b.jpg'), ('TripletMemberC', 'stimuli/fractals/172c.jpg'), ('Xcoordinate', -0.390625), ('Ycoordinate', -0.41666666700000005), ('Xcoordinate_lure1', -0.390625), ('Ycoordinate_lure1', -0.13888888900000002), ('Xcoordinate_lure2', -0.234375), ('Ycoordin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,
      OrderedDict([('TrialIndex', 4), ('Jitter', 1000), ('ScannerRun', 1), ('BlockNr', 2), ('TrialType', 'LOC'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/180a.jpg'), ('CurrentX', -0.078125), ('CurrentY', 0.13888888900000002), ('TripletMemberA', 'stimuli/fractals/173a.jpg'), ('TripletMemberB', 'stimuli/fractals/173b.jpg'), ('TripletMemberC', 'stimuli/fractals/173c.jpg'), ('Xcoordinate', -0.078125), ('Ycoordinate', 0.41666666700000005), ('Xcoordinate_lure1', 0.078125), ('Ycoordinate_lure1', 0.41666666700000005), ('Xcoordinate_lure2', -0.078125), ('Ycoordinat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
    Routine rec_fx_practice
    Routine rec_trial_practice
    Routine rec_practice_feedback
  LoopTerminator rec_full_practice
  Routine end_practice
  LoopInitiator run loopType="TrialHandler"
    Selected rows = $block_name_selection
    conditionsFile = $enc_table
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine wait_for_last_scan
    Routine start_MR
    Routine start_run
    Routine encoding_title
    Routine init_blocks
    Routine encoding_baseline
    LoopInitiator enc_trials loopType="TrialHandler"
      Selected rows = $enc_selection
      conditionsFile = $enc_table
      loopType = sequential
      nReps = 1
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      Routine enc_fx
      Routine enc_trial
    LoopTerminator enc_trials
    Routine filler_task
    Routine recognition_title
    Routine block_title
    Routine recognition_baseline
    LoopInitiator rec_trials loopType="TrialHandler"
      Selected rows = $rec_selection
      conditionsFile = $rec_table
      loopType = sequential
      nReps = 1
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      Routine rec_fx
      Routine rec_trial
    LoopTerminator rec_trials
    Routine end_run
  LoopTerminator run
  Routine end_session
