PsychoPy2experiment version="2020.1.3"
Settings
  Completed URL = https://docs.google.com/forms/d/e/1FAIpQLSe-JyQOJB2rcwl0jYrK_pOr_J8RNK4YRzq_I4WmRa4Pfox_aA/viewform?usp=sf_link
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['ID'],'pilot', expName, expInfo['date'])
  Experiment info = {'ID': '', 'Session': '', 'Table': ''}
  Full-screen window = True
  Monitor = AOC
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[0.804,0.804,0.961]
  expName = TRK-online
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Routines
  Routine inter_task_break
    TextComponent inter_task_break_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 1195.0
      text = A folytatáshoz nyomja le a jobb nyilat.
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    TextComponent inter_task_break_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1200.0
      text [set every repeat] = Vége az első résznek. Most kivesszük Önt a szkennerből.
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    KeyboardComponent inter_task_break_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 1195
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  Routine enc_trial
    CodeComponent get_size
      Code Type = Auto->JS
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      Begin Experiment:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
      Begin Routine:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
    ImageComponent enc_trial_interior
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = norm
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    ImageComponent enc_trial_main_image
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size [set every repeat] = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = norm
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    KeyboardComponent enc_trial_key
      allowedKeys = 'f', 'j'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent enc_trial_text_block
      color = black
      letterHeight = 0.05
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $block_name
      units = norm
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    TextComponent enc_trial_instructions_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = [F - Nem marad]      [J - Marad]
      units = norm
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    CodeComponent enc_trial_timer
      Code Type = Auto->JS
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      Each Frame:
        if frameN == 0: # start of the trial
            trial_start_time = globalClock.getTime() - trigger_time
            thisExp.addData('enc_trial_start_time', trial_start_time)
        elif frameN == 1: # the zeroth frame has just been drawn
            stimulus_start_time = globalClock.getTime() - trigger_time
            # store the data:
            thisExp.addData('enc_stimulus_start_time', stimulus_start_time)
  Routine consent
    TextComponent consent_text
      color = black
      disabled = True
      letterHeight = 0.022
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        A tervezett vizsgálattal kapcsolatban minden számomra fontos információt megkaptam, a tájékoztatót elolvastam. A vizsgálatban önszántamból, saját felelősségemre veszek részt.

        Kérjük, olvassa el az alábbi állításokat! Amennyiben egyetért velük, haladjon tovább a jobb nyíllal.

            • Tudomásul veszem, hogy a kísérlet anonim, és semmilyen, személyem azonosítására alkalmas adat rögzítésére nem kerül sor.

            • Tudomásul veszem, hogy a kitöltés bármikor, indoklás nélkül, akár végleg is megszakítható, és ebben az esetben a megadott adatok nem kerülnek feldolgozásra.

            • Tudomásul veszem, hogy adataimat a 2018. május 25-től hatályos 2016/679/EU Európai Unió általános adatvédelmi irányelvét és a magyarországi jogszabályokat (2011. évi CXII. adatvédelmi tv.) is betartva fogják kezelni.

            • Hozzájárulok ahhoz, hogy a vizsgálathoz szükséges személyes adataimat, valamint a vizsgálat során rólam nyert adatokat a kísérletet végzők egymástól elkülönítve rögzítsék, azokat egymástól elkülönítve, elektronikus úton tárolják, és kutatási célból felhasználják, úgy, hogy harmadik fél részére személyem azonosítására alkalmas információt nem szolgáltatnak ki.

            • Hozzájárulok, hogy a vizsgálat során megadott válaszaimat és böngészőm információit a https://pavlovia.org/ (Pavlovia) szervere tárolja.

            • Hozzájárulok, hogy anonimizált, személyes beazonosításomra nem alkalmas adataimat a tudományos közösséggel megosszák a https://osf.io/ (Open Science Foundation [magyarul: Nyílt Tudomány Alapítvány]) és a https://openneuro.org/ (OpenNeuro) szerverein.

            • Megértettem, hogy a vizsgálat végén kapott egyedi kóddal tudom igazolni, hogy a vizsgálatot elvégeztem. Az egyedi kód megadásával válok a kompenzációra jogosulttá.

        Elolvastam és megértettem a felsorolt állításokat.
    KeyboardComponent consent_key
      allowedKeys = 'right'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295
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    TextComponent consent_continue
      color = black
      disabled = True
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine info
  Routine lab_introduction
    TextComponent lab_thanks
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120.0
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      text:
        Köszönjük, hogy hozzájárul kutatócsoportunk munkájához azzal, hogy részt vesz vizsgálatunkban!
    KeyboardComponent lab_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent lab_introduction_continue
      color = black
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 119.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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    ImageComponent lab_members
      image = stimuli/lab_members.jpg
      pos = (0, -0.3704)
      size = (0.9458, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120.0
      units = norm
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  Routine enc_instructions_1
    TextComponent enc_instructions_1_text
      color = black
      letterHeight = 0.03
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 0.65
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      text:
        Ön ennek a modern képgalériának a kurátora.

        A legújabb kiállításra a vártnál több kép érkezett.
        Kurátorként az Ön feladata lesz eldönteni, mely képeket válogatjuk be a kiállított darabok közé, és hogy a mások által beválogatott képek illeszkednek-e a galéria adott pontjára.

        Az Ön ideje nagyon drága a galériának, így a döntésre egy-egy képről csak 3 másodperce lesz.
    ImageComponent enc_instructions_1_image
      image = stimuli/GalleryBuildingFromOutside.jpg
      pos = (0.4688, 0.0)
      size = (0.625, 0.8333)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = norm
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    KeyboardComponent enc_instructions_1_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent instructions_1_continue
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine enc_instructions_2
    TextComponent enc_instructions_2_text
      color = black
      letterHeight = 0.03
      pos = (-0.35, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 0.52
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      text:
        Ez a kiállítóterem, nézze meg figyelmesen.

        A feladat során a képek a falra vetítve jelennek meg. A képek előtt egy keresztet fog látni, ami jelzi a képek pontos helyét.

        A 'Kép' nevű alfeladat alatt döntse el a képekről, hogy ki legyenek-e állítva a galériában.

        A beválogatott képek száma nincsen korlátozva. Minden egyes képről Ön dönt.

        Ha több képet válogat be, mint amennyi a galériába fér, akkor a képeket az év során felváltva állítjuk ki.
    ImageComponent enc_instructions_2_image
      image = stimuli/GalleryInterior.png
      pos = (0.4427, 0)
      size = (0.7604, 0.8185)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = norm
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    KeyboardComponent enc_instructions_2_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent instructions_2_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine enc_fx
    CodeComponent get_screen_size
      Code Type = Auto->JS
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      Begin Experiment:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
      Begin Routine:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
    ImageComponent enc_fx_interior
      durationEstim = 1.5
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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    TextComponent enc_fx_cross
      color = black
      durationEstim = 1.5
      letterHeight = 0.1
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = +
      units = norm
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    KeyboardComponent enc_fx_key
      allowedKeys = 'f', 'j'
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
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    TextComponent enc_fx_text_block
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text [set every repeat] = $block_name
      units = norm
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    TextComponent enc_fx_instructions_text
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = [F - Nem marad]      [J - Marad]
      units = norm
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    CodeComponent enc_fx_timer
      Code Type = Auto->JS
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      Each Frame:
        if enc_trials.thisN == 0 and frameN == 0: # start of the loop
            loop_start_time = globalClock.getTime() - trigger_time
            thisExp.addData('enc_loop_start_time', loop_start_time)
        elif frameN == 1: # the zeroth frame has just been drawn
            fx_start_time = globalClock.getTime() - trigger_time
            # store the data:
            thisExp.addData('enc_fx_start_time', fx_start_time)
  Routine start_rec_run
    CodeComponent rec_run_counter
      Code Type = Auto->JS
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      Begin Routine:
        run_counter = run_counter + 1
        end_run_text = 'Szünet\nA feladat folytatáshoz nyomja le a jobb nyilat'

        if run_counter >= n_runs:
            end_run_text = 'Vége a második feladatnak. Felteszünk Önnek pár kérdést, majd megkapja a vizsgálat befejezését igazoló kódot.\nHaladjon tovább a jobb nyíllal.'
    TextComponent start_rec_run_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Kezdődik a feladat...
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  Routine end_rec_run
    TextComponent end_rec_run_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = $end_run_text
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    KeyboardComponent end_rec_run_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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  Routine rec_trial
    ImageComponent rec_trial_interior
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      units = norm
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    ImageComponent rec_trial_main_image
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size [set every repeat] = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      units = norm
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    KeyboardComponent rec_trial_key
      allowedKeys = 'f','j'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    TextComponent rec_trial_text_block
      color = black
      letterHeight = 0.05
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $block_name
      units = norm
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    TextComponent rec_trial_instructions_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text = [F - Régi]      [J - Új]
      units = norm
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    CodeComponent rec_trial_timer
      Code Type = Auto->JS
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      Each Frame:
        if frameN == 0: # start of the trial
            trial_start_time = globalClock.getTime() - trigger_time
            thisExp.addData('rec_trial_start_time', trial_start_time)
        elif frameN == 1: # the zeroth frame has just been drawn
            stimulus_start_time = globalClock.getTime() - trigger_time
            # store the data:
            thisExp.addData('rec_stimulus_start_time', stimulus_start_time)
  Routine rec_instructions_1
    TextComponent rec_instructions_1_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        A Képfelismerés feladatban ismét absztrakt képeket fog látni, és ezekről kell eldöntenie, látta-e őket a megelőző Galériaberendezés feladataban, és hogy ugyanott látta-e őket.

        A feladatot két alfeladatra bontottuk. Az egyikben a képekről, a másikban a képek pozíciójáról kell döntenie.
    KeyboardComponent rec_instructions_1_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent rec_instructions_1_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine rec_instructions_2
    TextComponent rec_instructions2_text
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 1
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      text:
        A 'Kép' nevű alfeladatban azt kell eldöntenie, látta-e már ezeket a képeket a megelőző Galériaberendezés blokkban.

        Két csoportba oszthatóak a megjelenő képek:
         - Régi: Ezek a képek pontosan megegyeznek a 'Galériaberendezés' megelőző sorozatában látott képek egyikével.
         - Új: Képek, amelyek nem jelentek meg a 'Galériaberendezés' feladatban. Ezek a képek lehetnek hasonlóak a korábban látottakhoz.

        Az Ön feladata, hogy eldöntse, melyik kép ugyanaz, mint a 'Galéria berendezés' feladatban, és melyik új.
        A döntésre 4 másodperce lesz.
        Minden képet nézzen meg figyelmesen, és minden képre adjon választ, akkor is, ha a döntés nehéz.

        Döntését így jelölje:
        Régi - F
        Új - J
    KeyboardComponent rec_instructions_2_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent rec_instructions_2_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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    TextComponent rec_instruction_2_title
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = 'Kép' alfeladat
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  Routine start_practice
    TextComponent start_practice_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Kezdődik a gyakorlás...
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    CodeComponent reset_practice_block
      Code Type = Auto->JS
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      Begin Routine:
        practice_start = 0
        practice_end = 0
  Routine end_practice
    TextComponent end_practice_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600.0
      text = Ez volt a gyakorlás.
      wrapWidth = 0.8
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    KeyboardComponent end_practice_key
      allowedKeys = 'right', 'left'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 599.0
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    CodeComponent end_practice_block_counter
      Code Type = Auto->JS
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      Begin Routine:
        block_counter = 0
    TextComponent end_practice_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 599.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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    TextComponent coming_up_next_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600.0
      text [set every repeat] = $coming_up_text
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  Routine enc_practice_feedback
    CodeComponent enc_practice_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        response = enc_trial_key.keys
        feedback_text = ''
        if response == 'f':
            feedback_text = 'Az Ön válasza:\nA kép nem marad.'
        elif response == 'j':
            feedback_text = 'Az Ön válasza:\nA kép marad.'
        else:
            feedback_text = 'Nem adott választ.'
    ImageComponent enc_practice_feedback_interior
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = norm
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    ImageComponent enc_practice_feedback_image
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size [set every repeat] = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = norm
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    TextComponent enc_practice_feedback_text
      color = black
      letterHeight = 0.05
      pos [set every repeat] = (CurrentX, CurrentY - 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
      units = norm
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    TextComponent enc_practice_feedback_block
      color = black
      letterHeight = 0.05
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $block_name
      units = norm
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  Routine rec_instructions_3
    TextComponent rec_instrauction_3_text
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 1
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      text:
        A 'Hely' nevű alfeladatban azt kell eldöntenie, a képek a képernyő ugyanazon pontján jelennek-e meg, mint a megelőző Galériaberendezés sorozatban.
        Ebben az alfeladatban minden kép pontos mása annak, amit a Galériaberendezés alatt látott.

        A helyek azonban két csoportba oszthatóak:
         - Régi: Pontosan ugyanitt jelent meg ez a kép a Galériaberendezés feladatban.
         - Új: Egy másik helyen jelent meg ez a kép a Galériaberendezés feladatban. Ez a hely lehet közeli az eredeti helyhez.

        Az Ön feladata, hogy eldöntse, melyik kép jelent meg ugyanott, és melyik új helyen.
        A döntésre 4 másodperce lesz.
        Minden képet nézzen meg figyelmesen, és minden képre adjon választ, akkor is, ha a döntés nehéz.

        A döntését így jelölje:
        Régi - F
        Új - J
    KeyboardComponent rec_instructions_3_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 5
      stopVal [duration (s)] = 295
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    TextComponent rec_instructions_3_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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    TextComponent rec_instruction_3_title
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = 'Hely' alfeladat
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  Routine rec_instructions_4
    TextComponent rec_instructions_4_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        A következőkben pár példával mutatjuk be Önnek, milyen hasonlóak lehetnek az új képek és helyek.

        A bemutatóban elsőként egy, a Galériaberendezés gyakorlása során már látott képet/helyet mutatunk Önnek, 'Régi' felirattal.
        A régi képet/helyet mindig egy új kép/hely követi a bemutatóban, 'Új' felirattal.
    KeyboardComponent rec_instructions_4_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
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    TextComponent rec_instructions_4_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine demo
    ImageComponent demo_interior
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = norm
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    ImageComponent demo_main_image
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size [set every repeat] = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = norm
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    ImageComponent demo_image
      image [set every repeat] = $DemoImage
      pos [set every repeat] = (DemoX, DemoY)
      size [set every repeat] = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = norm
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    TextComponent demo_text
      color = black
      letterHeight = 0.05
      pos = (-0.025, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = $DemoText
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    KeyboardComponent demo_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 298
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    TextComponent demo_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 298.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine demo_end
    TextComponent demo_end_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Ez volt a bemutató. Most a Képfelismerés gyakorlása következik.
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    KeyboardComponent demo_end_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
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    TextComponent demo_end_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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    CodeComponent demo_end_set_text
      Code Type = Auto->JS
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      End Routine:
        coming_up_text='Most a két feladattípus együttes gyakorlása következik.'
  Routine start_rec_block_3
  Routine start_rec_block_2
  Routine start_rec_practice_block
    CodeComponent start_rec_practice_code
      Code Type = Both
      Begin Experiment:
        rec_practice_block = [0,1,2]
        block_name = "Kép"
        block_counter = 0
      Begin JS Experiment:
        rec_practice_block = [0, 1, 2];
        block_name = "K\u00e9p";
        block_counter = 0;
      Begin JS Routine:
        block_counter = (block_counter + 1);
        if ((block_counter >= 2)) {
            rec_practice_block = [3, 4, 5];
            block_name = "Hely";
        }
      Begin Routine:
        block_counter = block_counter + 1
        if block_counter >= 2:
            rec_practice_block = [3,4,5]
            block_name = "Hely"
    TextComponent rec_practice_block_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $block_name
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  Routine rec_practice_feedback
    CodeComponent rec_practice_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        correct_response = ''
        if StimType == 'FOIL':
            correct_response = 'A helyes válasz: Új'
        elif StimType == 'LURE':
            correct_response = 'A helyes válasz: Új'
        elif StimType == 'TARGET':
            correct_response = 'A helyes válasz: Régi'

        response = ''
        if rec_trial_key.keys == 'f':
            response = 'Az Ön válasza: Régi'

        elif rec_trial_key.keys == 'j':
            response = 'Az Ön válasza: Új'

        feedback_text = correct_response +'\n'+ response
    TextComponent rec_practice_feedback_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $feedback_text
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  Routine data_protection
    TextComponent data_protection_text
      color = black
      disabled = True
      letterHeight = 0.022
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        Köszönjük, hogy hozzájárul kutatócsoportunk munkájához azzal, hogy részt vesz vizsgálatunkban.

        A vizsgálat során a fentebb leírt feladatra adott válaszai mellett a következő adatok kerülnek rögzítésre: nem, kor, oktatás éve. Ezen adatok szolgáltatása a vizsgálat előfeltétele.

        A kísérlet anonim, és semmilyen, az Ön személyének azonosítására alkalmas adat rögzítésére nem kerül sor. Anonim adatait szeretnénk megosztani a tudományos közösséggel, hogy azokat más kutatók is fel tudják majd használni elemzéseikben, kutatásaikban. Ezzel értékes információt és időt nyerhet a világ tudományos közössége. Az adatok kezelésével és a titoktartással kapcsolatban bővebb információt az Adatkezelés nevű dokumentumunkban olvashat.

        A vizsgálat online végezhető el, a Pavlovia (https://pavlovia.org/) online kísérleti felületén. A résztvevők a vizsgálat végén kapott egyedi kód későbbi bemutatásával válnak a kompenzációra jogosulttá.

        Ez az egyedi kód csak azzal az információval lesz összekapcsolva, hogy Ön elvégezte a kísérletet; a megadott adatai közül (nem, kor, okatatás éve) egyik sem lesz e kódhoz hozzárendelve semmilyen adatbázisban. A vizsgálat befejeztével lehetősége nyílik egy online űrlap kitöltésére, ahol az egyedi kódja illetve az e-mail címe megadását fogjuk kérni Öntől. A megadott email címre fogjuk elküldeni a kompenzációt.
    KeyboardComponent data_protection_key
      allowedKeys = 'right'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent data_procetion_continue
      color = black
      disabled = True
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine experiment_information
    TextComponent experiment_information_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        Kérjük, figyelmesen olvassa végig az alábbi instrukciókat!

        A vizsgálathoz használjon asztali számítógépet vagy laptopot. A vizsgálat nem végezhető el mobil eszközön, például okostelefonon vagy táblagépen. A feladatok elvégzéséhez szüksége lesz működő billentyűzetre és stabil internet kapcsolatra. Az optimális eredmény elérése érdekében Google Chrome, Firefox vagy Safari böngésző használata javasolt. Kérjük, használja a teljes képernyő módot.
        A kísérlet teljes körű, zavartalan figyelmet igényel. A vizsgálat elvégzése 50-60 percet vesz igénybe. Bizonyosodjon meg róla, hogy elég időt tud szánni a vizsgálatra. Ügyeljen arra, hogy telefont, vagy más eszközöket közben ne használjon, és kerülje a másokkal való interakciót.

        A vizsgálat két feladattípusból áll, melyek során absztrakt képeket kell kiválogatnia a megadott szempontok szerint. A feladattípusokat 8 perces körökben, váltakozva fogja elvégezni. A körök között lesz lehetősége rövid pihenőt tartani.
    KeyboardComponent experiment_information_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 290.0
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    TextComponent experiment_information_continue
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 290.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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    CodeComponent consent_check
      Code Type = Auto->JS
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      Begin Experiment:
        proceed = False
        consent = expInfo['A vizsgálat feltételeibe beleegyezem. (igen/nem)*']
        dataprotection = expInfo['Az adatkezelési feltételeket elfogadom. (igen/nem)*']
        consent_ok = False
        data_ok = False

        if consent == 'igen' or consent == 'i' or consent == 'Igen' or consent == 'I':
            consent_ok = True

        if dataprotection == 'igen' or dataprotection == 'i' or dataprotection == 'Igen' or dataprotection == 'I':
            data_ok = True

        if consent_ok & data_ok:
            proceed = True

        if not proceed:
            core.quit()
    CodeComponent exp_setup
      Code Type = Auto->JS
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      Begin Experiment:
        tables = [0]
        shuffle(tables)
        trial_table = tables.pop()
        print('selected file {}'.format(trial_table))
        trial_table = str(trial_table)

        enc_table = 'stimuli_tables/encoding_trials_'+ trial_table + '.csv'
        rec_table = 'stimuli_tables/recognition_trials_'+ trial_table + '.csv'
  Routine comprehension_question
    TextComponent comprehension_question_text
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = $Question
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    TextComponent comprehension_question_answers
      color = black
      letterHeight = 0.04
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = $Answer
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    KeyboardComponent comprehension_key
      allowedKeys = 'd','f','j','k'
      correctAns = $CorrectResponse
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
      store = first key
      storeCorrect = True
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  Routine comprehension_feedback
    CodeComponent check_answer
      Code Type = Auto->JS
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      Begin Routine:
        comprehension_repeat = 300.0
        comprehension_feedback = IncorrectAnswer
        if comprehension_key.corr==1:
            comprehension_repeat = 0.0
            comprehension_feedback = CorrectAnswer
    TextComponent comprehension_feedback_text
      color = black
      letterHeight = 0.06
      pos = (0, 0.0)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $comprehension_feedback
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  Routine end_experiment
    TextComponent end_experiment_text
      color = black
      letterHeight = 0.03
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        Köszönjük a részvételt!

        Jegyezze fel az alábbi kódot, amellyel a részvételét igazolja:
    CodeComponent generate_participant_code
      Code Type = Both
      Begin Experiment:
        code = np.random.randint(100000, high=999999)
      Begin JS Experiment:
        code = Math.floor(100000 + Math.random() * 900000)
    TextComponent end_experiment_code
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = $code
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    TextComponent end_experiment_continue
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 297.0
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      text:
        A jobb nyíl lenyomásával megjelenik a vizsgálat végét jelző üzenet. Ezt fogadja el az OK gombbal, majd átirányítjuk egy felületre, ahol a kód megadásával igazolni tudja a részvételét.
        Probléma esetén írjon nekünk a terkep@ttk.hu email címen.
    KeyboardComponent end_experiment_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 294.0
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  Routine comprehension_repeat
    KeyboardComponent comprehension_continue_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = $comprehension_repeat
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    TextComponent comprehension_continue_text
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = $comprehension_repeat
      text = A folytatáshoz nyomja le a jobb nyilat. 
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    TextComponent comprehension_repeat_text
      color = black
      letterHeight = 0.03
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $comprehension_repeat
      text [set every repeat] = $InfoRepeated
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  Routine demo_start
    TextComponent demo_start_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Kezdődik a bemutató...
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  Routine start_run
    CodeComponent run_counter
      Code Type = Auto->JS
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      Begin Experiment:
        run_counter = 0
      Begin Routine:
        run_counter = run_counter + 1
        end_run_text = 'Rövid szünet.\n\nA feladat folytatáshoz nyomja le a jobb nyilat.'

        if run_counter == 3:
            end_run_text = 'Vége a feladat első felének. A folytatáshoz nyomja le a jobb nyilat.'
        elif run_counter ==6:
            end_run_text = 'Vége a feladatnak. A folytatáshoz nyomja le a jobb nyilat.'
    TextComponent start_enc_run_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Kezdődik a feladat...
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  Routine end_run
    TextComponent end_enc_run_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1200
      text [set every repeat] = $end_run_text
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    KeyboardComponent enc_run_end_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1200
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  Routine encoding_title
    TextComponent encoding_title_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Galéria berendezés
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  Routine recognition_title
    TextComponent start_recognition_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Képfelismerés
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  Routine practice_block_start
    CodeComponent create_practice_block
      Code Type = Both
      Begin Experiment:
        practice_end = 0
        step = 1
      Begin JS Experiment:
        practice_end = 0;
        step = 1;
      Begin JS Routine:
        practice_start = practice_end;
        practice_end = (practice_start + 3);
        practice_selection = Array.from({length: practice_end - practice_start}, (_, index) => index + practice_start);
        block_name = "";
        if ((TrialType === "OBJ")) {
            block_name = "K\u00e9p";
        } else {
            if ((TrialType === "LOC")) {
                block_name = "Hely";
            } else {
                block_name = "Block Unknown";
            }
        }
      Begin Routine:
        practice_start = practice_end
        practice_end = practice_start + 3
        practice_selection = np.arange(practice_start, practice_end, step)

        block_name = ''
        if TrialType=='OBJ':
            block_name='Kép'
        elif TrialType=='LOC':
            block_name='Hely'
        else:
            block_name='Block Unknown'
    TextComponent start_practice_block
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $block_name
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  Routine general_instructions_2
    TextComponent general_instructions_text_2
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        Mindkét feladatnak két típusa van: 'Kép' és 'Hely'.

        Galériaberendezés:
        Ha az alfeladat neve 'Kép', akkor arról kell döntést hoznia, hogy a bemutatott kép ki legyen-e állítva a következő kiállításon.
        Ha az alfeladat neve 'Hely', akkor azt kell eldöntenie, a bemutatt kép az aktuálisan jelzett helyen legyen-e kiállítva.
    KeyboardComponent general_instructions_key_2
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 290.0
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    TextComponent general_instructions_continue_2
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 290.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine general_instructions_1
    TextComponent general_instructions_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        A vizsgálat kétféle feladattípusból áll.

        Az első feladattípus a Galériaberendezés. Ebben a feladatban képeket kell beválogatnia egy modern művészeti galériába.

        A második feladattípus a Képfelismerés. Ebben a feladatban azt kell eldöntenie, a bemutatott képeket látta-e a megelőző Galériaberendezés feladat során.

        A vizsgálatot 6 körre osztottuk, úgy, hogy egy Képfelismerés feladatot Önnek mindig a közvetlenül megelőző Galériaberendezés feladat alapján kell elvégeznie.

        Egy kör 8 percet vesz igénybe, a körök között rövid (maximum 2 perces) szünetet tud tartani. A harmadik kör után tarthat egy hosszabb (maximum 10 perces) szünetet.
    KeyboardComponent general_instructions_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 290.0
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    TextComponent general_instructions_continue
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 290.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine encoding_title_2
    TextComponent start_encoding_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Galéria berendezés
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  Routine init_blocks
    CodeComponent name_block
      Code Type = Auto->JS
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      Begin Routine:
        block_name = ''
        if TrialType=='OBJ':
            block_name='Kép'
        elif TrialType=='LOC':
            block_name='Hely'
        else:
            block_name='Block Unknown'
    CodeComponent create_rec_block
      Code Type = Both
      Begin Experiment:
        rec_end = 0
      Begin JS Experiment:
        rec_end = 0;
      Begin JS Routine:
        rec_start = rec_end;
        rec_end = (rec_start + 24);
        rec_selection = Array.from({length: rec_end - rec_start}, (_, index) => index + rec_start)
      Begin Routine:
        rec_start = rec_end
        rec_end = rec_start + 4
        rec_selection = np.arange(rec_start,rec_end, step)
    TextComponent start_rec_block_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $block_name
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    CodeComponent create_enc_block
      Code Type = Both
      Begin Experiment:
        enc_end = 0;
      Begin JS Experiment:
        enc_end = 0;
      Begin JS Routine:
        enc_start = enc_end;
        enc_end = (enc_start + 50);
        enc_selection = Array.from({length: enc_end - enc_start}, (_, index) => index + enc_start);
      Begin Routine:
        enc_start = enc_end
        enc_end = enc_start + 4
        enc_selection = np.arange(enc_start, enc_end, step)
  Routine general_instructions_3
    TextComponent general_instructions_text_3
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        Képfelismerés:
        Ha az alfeladat neve 'Kép', akkor arra kell választ adnia, a bemutatott kép pontosan megegyezik-e a Galériaberendezés feladatban látot képek egyikével.
        Ha az alfeladat neve 'Hely', akkor a képek pozíciójáról kell döntenie: a képernyő ugyanezen pontján látta korábban a bemutatott képet?

        A vizsgálatot 6 körre osztottuk, úgy, hogy egy Képfelismerés blokkot Önnek mindig a közvetlenül megelőző Galériaberendezés blokk alapján kell elvégeznie.
        A sorrend lehet például:

        'Kép' Galériaberendezés -> 'Kép' Képfelismerés
        'Hely' Galériaberendezés -> 'Hely' Képfelismerés
    KeyboardComponent general_instructions_key_3
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 290.0
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    TextComponent general_instructions_continue_3
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 290.0
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      text:
        Most részletesebben bemutatjuk Önnek a Galériaberendezés feladatot.
        A folytatáshoz nyomja le a jobb nyilat.
  Routine enc_instructions_4
    TextComponent enc_instructions_3_text
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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      text:
        A 'Kép' alfeladat alatt a 'J' billentyűvel jelölje azokat a képeket, amelyeket beválogat a kiállításra.

        Az 'F' billentyűvel jelölje a képeket, amelyeket nem válogat be a kiállításra.


        A 'Hely' nevű alfeladatban a 'J' billentyűvel jelölje azokat a képeket, amelyek maradhatnak a galéria adott pontján.

        Az 'F' billentyűvel jelölje a képeket, amelyek nem maradhatnak a galéria adott pontján.

        Most a Galériaberendezés gyakorlása következik.
    KeyboardComponent enc_instructions_3_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295
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    TextComponent enc_instructions_3_continue
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = Ha készen áll a gyakorlásra, nyomja le a jobb nyilat.
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    CodeComponent enc_instructions_set_text
      Code Type = Auto->JS
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      End Routine:
        coming_up_text='Most a Képfelismerés feladat bemutatása következik.'
  Routine enc_instructions_3
    TextComponent enc_instructions_2_text_2
      color = black
      letterHeight = 0.03
      pos = (-0.35, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 0.52
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      text:
        A 'Hely' nevű alfeladat alatt azt döntse el, a bemutatott kép maradhat-e a galéria adott pontján.
        Ezeket a képeket mindenképp kiállítjuk, itt csak a képek helyéről tud dönteni.

        Minden képet nézzen meg figyelmesen, és minden képre adjon választ.
    ImageComponent enc_instructions_2_image_2
      image = stimuli/GalleryInterior.png
      pos = (0.4427, 0)
      size = (0.7604, 0.8185)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = norm
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    KeyboardComponent enc_instructions_2_key_2
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent instructions_2_continue_2
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine block_title
    TextComponent block_title_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $block_name
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    CodeComponent block_title_set_text
      Code Type = Auto->JS
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      End Routine:
        coming_up_text='A feladat következik. A feladat során már nem kap visszajelzést.'
  Routine wait_for_last_scan
    TextComponent wait_for_last_scan_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600.0
      text = A vizsgálatvezető előkészíti a szkennert.
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    KeyboardComponent wait_for_last_scan_continue
      allowedKeys = 'right', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 599
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  Routine start_MR
    CodeComponent start_MR_timer
      Code Type = Auto->JS
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      End Routine:
        trigger_time = globalClock.getTime()
        thisExp.addData('trigger_time', trigger_time)
    TextComponent start_MR_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1200.0
      text = A vizsgálatvezető indítja a szkennert.
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    KeyboardComponent key_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1200.0
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  Routine inter_session_break
    CodeComponent screen_size
      Code Type = Auto->JS
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      Begin Experiment:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
      Begin Routine:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
    ImageComponent rec_fx_interior
      durationEstim = 1.5
      image = stimuli/GalleryInterior.png
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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    TextComponent rec_fx_cross
      color = black
      durationEstim = 1.5
      letterHeight = 0.1
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = +
      units = norm
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    KeyboardComponent rec_fx_key
      allowedKeys = 'f','j'
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
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    TextComponent rec_fx_text_block
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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      text [set every repeat]:
        $block_name
    TextComponent rec_fx_instructions_text
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = Jitter/1000
      text = [F - Régi]      [J - Új]
      units = norm
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    CodeComponent rec_fx_timer
      Code Type = Auto->JS
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      Each Frame:
        if enc_trials.thisN == 0 and frameN == 0: # start of the loop
            loop_start_time = globalClock.getTime() - trigger_time
            thisExp.addData('enc_loop_start_time', loop_start_time)
        elif frameN == 1: # the zeroth frame has just been drawn
            fx_start_time = globalClock.getTime() - trigger_time
            # store the data:
            thisExp.addData('enc_fx_start_time', fx_start_time)
  Routine experiment_setup
    CodeComponent select_files
      Code Type = Both
      Begin Experiment:
        tables = [0]
        shuffle(tables)
        trial_table = tables.pop()
        print('selected file {}'.format(trial_table))
        trial_table = str(trial_table)

        enc_table = 'stimuli_tables/encoding_trials_'+ trial_table + '.csv'
        rec_table = 'stimuli_tables/recognition_trials_'+ trial_table + '.csv'
      Begin JS Experiment:
        tables = ["0","1","2"];
        trial_table = tables[Math.floor(Math.random() * tables.length)];

        enc_table = (("stimuli_tables/encoding_trials_" + trial_table) + ".csv");
        rec_table = (("stimuli_tables/recognition_trials_" + trial_table) + ".csv");
Flow
  Routine experiment_setup
  Routine general_instructions_1
  Routine general_instructions_2
  Routine general_instructions_3
  Routine encoding_title
  Routine enc_instructions_1
  Routine enc_instructions_2
  Routine enc_instructions_3
  Routine enc_instructions_4
  Routine start_practice
  Routine encoding_title
  LoopInitiator enc_practice_trials loopType="TrialHandler"
    Selected rows = 1,4
    conditionsFile = stimuli_tables/encoding_practice_trials.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('TrialIndex', 1), ('Jitter', 800), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/170a.jpg'), ('CurrentX', 0.078125), ('CurrentY', -0.138888888888889), ('TripletMemberA', 'stimuli/fractals/170a.jpg'), ('TripletMemberB', 'stimuli/fractals/170b.jpg'), ('TripletMemberC', 'stimuli/fractals/170c.jpg'), ('Xcoordinate', 0.078125), ('Ycoordinate', -0.138888888888889), ('Xcoordinate_lure1', 0.234375), ('Ycoordinate_lure1', -0.138888888888889), ('Xcoordinate_lure2', -0.078125), ('Ycoordinate_lur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,
      OrderedDict([('TrialIndex', 2), ('Jitter', 4000), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'TARGET'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/171a.jpg'), ('CurrentX', 0.390625), ('CurrentY', 0.4166666666666671), ('TripletMemberA', 'stimuli/fractals/171a.jpg'), ('TripletMemberB', 'stimuli/fractals/171b.jpg'), ('TripletMemberC', 'stimuli/fractals/171c.jpg'), ('Xcoordinate', 0.390625), ('Ycoordinate', 0.4166666666666671), ('Xcoordinate_lure1', 0.234375), ('Ycoordinate_lure1', 0.4166666666666671), ('Xcoordinate_lure2', 0.390625), ('Ycoordinate_lu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,
      OrderedDict([('TrialIndex', 3), ('Jitter', 2000), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'FOIL'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/172a.jpg'), ('CurrentX', -0.390625), ('CurrentY', -0.138888888888889), ('TripletMemberA', 'stimuli/fractals/172a.jpg'), ('TripletMemberB', 'stimuli/fractals/172b.jpg'), ('TripletMemberC', 'stimuli/fractals/172c.jpg'), ('Xcoordinate', -0.390625), ('Ycoordinate', -0.138888888888889), ('Xcoordinate_lure1', -0.234375), ('Ycoordinate_lure1', -0.138888888888889), ('Xcoordinate_lure2', -0.390625), ('Ycoordinate_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,
      OrderedDict([('TrialIndex', 4), ('Jitter', 1000), ('ScannerRun', 1), ('BlockNr', 2), ('TrialType', 'LOC'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/173a.jpg'), ('CurrentX', 0.078125), ('CurrentY', 0.4166666666666671), ('TripletMemberA', 'stimuli/fractals/173a.jpg'), ('TripletMemberB', 'stimuli/fractals/173b.jpg'), ('TripletMemberC', 'stimuli/fractals/173c.jpg'), ('Xcoordinate', 0.078125), ('Ycoordinate', 0.4166666666666671), ('Xcoordinate_lure1', 0.078125), ('Ycoordinate_lure1', 0.138888888888889), ('Xcoordinate_lure2', -0.078125), ('Ycoordinate_lure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
    Routine practice_block_start
    LoopInitiator enc_practice_block loopType="TrialHandler"
      Selected rows = $practice_selection
      conditionsFile = stimuli_tables/encoding_practice_trials.csv
      loopType = random
      nReps = 1
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      conditions:
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      Routine enc_fx
      Routine enc_trial
      Routine enc_practice_feedback
    LoopTerminator enc_practice_block
  LoopTerminator enc_practice_trials
  Routine end_practice
  Routine recognition_title
  Routine rec_instructions_1
  Routine rec_instructions_2
  Routine rec_instructions_3
  Routine rec_instructions_4
  Routine demo_start
  LoopInitiator demo_trials loopType="TrialHandler"
    conditionsFile = stimuli_tables/stimuli_demo.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Task', 'Demo'), ('TrialType', 'OBJ'), ('StimType', 'TARGET'), ('CurrentImage', 'stimuli/fractals/163a.jpg'), ('DemoImage', None), ('CurrentX', -0.234375), ('CurrentY', -0.4166666666666667), ('DemoX', None), ('DemoY', None), ('InPractice', None), ('DemoText', 'Régi Kép'), ('Jitter', 800)]),
      OrderedDict([('Task', 'Demo'), ('TrialType', 'OBJ'), ('StimType', 'FOIL'), ('CurrentImage', 'stimuli/fractals/173c.jpg'), ('DemoImage', None), ('CurrentX', -0.234375), ('CurrentY', -0.4166666666666667), ('DemoX', None), ('DemoY', None), ('InPractice', None), ('DemoText', 'Új Kép'), ('Jitter', 1500)]),
      OrderedDict([('Task', 'Demo'), ('TrialType', 'OBJ'), ('StimType', 'TARGET'), ('CurrentImage', 'stimuli/fractals/177b.jpg'), ('DemoImage', None), ('CurrentX', -0.390625), ('CurrentY', 0.4166666666666667), ('DemoX', None), ('DemoY', None), ('InPractice', None), ('DemoText', 'Régi Kép'), ('Jitter', 1100)]),
      OrderedDict([('Task', 'Demo'), ('TrialType', 'OBJ'), ('StimType', 'LURE'), ('CurrentImage', 'stimuli/fractals/177c.jpg'), ('DemoImage', None), ('CurrentX', -0.390625), ('CurrentY', 0.4166666666666667), ('DemoX', None), ('DemoY', None), ('InPractice', None), ('DemoText', 'Új Kép'), ('Jitter', 1800)])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
    Routine demo
  LoopTerminator demo_trials
  Routine demo_end
  Routine start_practice
  LoopInitiator rec_practice_blocks loopType="TrialHandler"
    Selected rows = 1,4
    conditionsFile = stimuli_tables/recognition_practice_trials.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('TrialIndex', 1), ('Jitter', 800), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/170c.jpg'), ('CurrentX', 0.078125), ('CurrentY', -0.138888888888889), ('TripletMemberA', 'stimuli/fractals/170a.jpg'), ('TripletMemberB', 'stimuli/fractals/170b.jpg'), ('TripletMemberC', 'stimuli/fractals/170c.jpg'), ('Xcoordinate', 0.078125), ('Ycoordinate', -0.138888888888889), ('Xcoordinate_lure1', 0.234375), ('Ycoordinate_lure1', -0.138888888888889), ('Xcoordinate_lure2', -0.078125), ('Ycoordinate_lur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,
      OrderedDict([('TrialIndex', 2), ('Jitter', 4000), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'TARGET'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/171a.jpg'), ('CurrentX', 0.390625), ('CurrentY', 0.4166666666666671), ('TripletMemberA', 'stimuli/fractals/171a.jpg'), ('TripletMemberB', 'stimuli/fractals/171b.jpg'), ('TripletMemberC', 'stimuli/fractals/171c.jpg'), ('Xcoordinate', 0.390625), ('Ycoordinate', 0.4166666666666671), ('Xcoordinate_lure1', 0.234375), ('Ycoordinate_lure1', 0.4166666666666671), ('Xcoordinate_lure2', 0.390625), ('Ycoordinate_lu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,
      OrderedDict([('TrialIndex', 3), ('Jitter', 2000), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'FOIL'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/176a.jpg'), ('CurrentX', 0.234375), ('CurrentY', 0.138888888888889), ('TripletMemberA', 'stimuli/fractals/172a.jpg'), ('TripletMemberB', 'stimuli/fractals/172b.jpg'), ('TripletMemberC', 'stimuli/fractals/172c.jpg'), ('Xcoordinate', -0.390625), ('Ycoordinate', -0.138888888888889), ('Xcoordinate_lure1', -0.234375), ('Ycoordinate_lure1', -0.138888888888889), ('Xcoordinate_lure2', -0.390625), ('Ycoordinate_lu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,
      OrderedDict([('TrialIndex', 4), ('Jitter', 1000), ('ScannerRun', 1), ('BlockNr', 2), ('TrialType', 'LOC'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/173a.jpg'), ('CurrentX', -0.078125), ('CurrentY', 0.4166666666666671), ('TripletMemberA', 'stimuli/fractals/173a.jpg'), ('TripletMemberB', 'stimuli/fractals/173b.jpg'), ('TripletMemberC', 'stimuli/fractals/173c.jpg'), ('Xcoordinate', 0.078125), ('Ycoordinate', 0.4166666666666671), ('Xcoordinate_lure1', 0.078125), ('Ycoordinate_lure1', 0.138888888888889), ('Xcoordinate_lure2', -0.078125), ('Ycoordinate_lur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
    Routine practice_block_start
    LoopInitiator rec_practice_trials loopType="TrialHandler"
      Selected rows = $practice_selection
      conditionsFile = stimuli_tables/recognition_practice_trials.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Task', 'RecognitionPractice'), ('TrialIndex', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'FOIL'), ('CurrentImage', 'stimuli/fractals/156b.jpg'), ('CurrentX', 0.2344), ('CurrentY', -0.1389), ('Jitter', 0.6), ('Filler', 0)]),
        OrderedDict([('Task', 'RecognitionPractice'), ('TrialIndex', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'LURE'), ('CurrentImage', 'stimuli/fractals/166c.jpg'), ('CurrentX', -0.0781), ('CurrentY', 0.4167), ('Jitter', 0.6), ('Filler', 0)]),
        OrderedDict([('Task', 'RecognitionPractice'), ('TrialIndex', 2), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'TARGET'), ('CurrentImage', 'stimuli/fractals/167a.jpg'), ('CurrentX', 0.2344), ('CurrentY', 0.4167), ('Jitter', 2.0), ('Filler', 0)]),
        OrderedDict([('Task', 'RecognitionPractice'), ('TrialIndex', 4), ('BlockNr', 2), ('TrialType', 'LOC'), ('StimType', 'FOIL'), ('CurrentImage', 'stimuli/fractals/159a.jpg'), ('CurrentX', -0.0781), ('CurrentY', -0.4167), ('Jitter', 1.0), ('Filler', 0)]),
        OrderedDict([('Task', 'RecognitionPractice'), ('TrialIndex', 5), ('BlockNr', 2), ('TrialType', 'LOC'), ('StimType', 'LURE'), ('CurrentImage', 'stimuli/fractals/148b.jpg'), ('CurrentX', 0.2344), ('CurrentY', -0.4167), ('Jitter', 1.5), ('Filler', 0)]),
        OrderedDict([('Task', 'RecognitionPractice'), ('TrialIndex', 6), ('BlockNr', 2), ('TrialType', 'LOC'), ('StimType', 'TARGET'), ('CurrentImage', 'stimuli/fractals/166a.jpg'), ('CurrentX', -0.0781), ('CurrentY', 0.4167), ('Jitter', 1.0), ('Filler', 0)])]
      Routine inter_session_break
      Routine rec_trial
      Routine rec_practice_feedback
    LoopTerminator rec_practice_trials
  LoopTerminator rec_practice_blocks
  Routine end_practice
  Routine start_practice
  LoopInitiator full_practce loopType="TrialHandler"
    Selected rows = 1, 4
    conditionsFile = stimuli_tables/recognition_full_practice_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('TrialIndex', 1), ('Jitter', 800), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/177c.jpg'), ('CurrentX', 0.078125), ('CurrentY', -0.13888888900000002), ('TripletMemberA', 'stimuli/fractals/170a.jpg'), ('TripletMemberB', 'stimuli/fractals/170b.jpg'), ('TripletMemberC', 'stimuli/fractals/170c.jpg'), ('Xcoordinate', 0.078125), ('Ycoordinate', -0.41666666700000005), ('Xcoordinate_lure1', -0.078125), ('Ycoordinate_lure1', -0.41666666700000005), ('Xcoordinate_lure2', 0.234375), ('Ycoordina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,
      OrderedDict([('TrialIndex', 2), ('Jitter', 4000), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'TARGET'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/178a.jpg'), ('CurrentX', 0.390625), ('CurrentY', 0.41666666700000005), ('TripletMemberA', 'stimuli/fractals/171a.jpg'), ('TripletMemberB', 'stimuli/fractals/171b.jpg'), ('TripletMemberC', 'stimuli/fractals/171c.jpg'), ('Xcoordinate', 0.390625), ('Ycoordinate', 0.41666666700000005), ('Xcoordinate_lure1', 0.234375), ('Ycoordinate_lure1', 0.41666666700000005), ('Xcoordinate_lure2', 0.390625), ('Ycoordinate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,
      OrderedDict([('TrialIndex', 3), ('Jitter', 2000), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/179c.jpg'), ('CurrentX', 0.234375), ('CurrentY', 0.13888888900000002), ('TripletMemberA', 'stimuli/fractals/172a.jpg'), ('TripletMemberB', 'stimuli/fractals/172b.jpg'), ('TripletMemberC', 'stimuli/fractals/172c.jpg'), ('Xcoordinate', -0.390625), ('Ycoordinate', -0.41666666700000005), ('Xcoordinate_lure1', -0.390625), ('Ycoordinate_lure1', -0.13888888900000002), ('Xcoordinate_lure2', -0.234375), ('Ycoordin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,
      OrderedDict([('TrialIndex', 4), ('Jitter', 1000), ('ScannerRun', 1), ('BlockNr', 2), ('TrialType', 'LOC'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/180a.jpg'), ('CurrentX', -0.078125), ('CurrentY', 0.13888888900000002), ('TripletMemberA', 'stimuli/fractals/173a.jpg'), ('TripletMemberB', 'stimuli/fractals/173b.jpg'), ('TripletMemberC', 'stimuli/fractals/173c.jpg'), ('Xcoordinate', -0.078125), ('Ycoordinate', 0.41666666700000005), ('Xcoordinate_lure1', 0.078125), ('Ycoordinate_lure1', 0.41666666700000005), ('Xcoordinate_lure2', -0.078125), ('Ycoordinat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
    Routine practice_block_start
    LoopInitiator enc_full_practice loopType="TrialHandler"
      Selected rows = $practice_selection
      conditionsFile = stimuli_tables/encoding_full_practice_trials.csv
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
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      Routine enc_fx
      Routine enc_trial
      Routine enc_practice_feedback
    LoopTerminator enc_full_practice
    Routine recognition_title
    Routine block_title
    LoopInitiator rec_full_practice loopType="TrialHandler"
      Selected rows = $practice_selection
      conditionsFile = stimuli_tables/recognition_full_practice_trials.csv
      loopType = random
      nReps = 1
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      conditions:
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      Routine inter_session_break
      Routine rec_trial
      Routine rec_practice_feedback
    LoopTerminator rec_full_practice
  LoopTerminator full_practce
  Routine end_practice
  LoopInitiator run loopType="TrialHandler"
    Selected rows = 1, 51, 101
    conditionsFile = $enc_table
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine start_MR
    Routine start_run
    Routine encoding_title
    Routine init_blocks
    LoopInitiator enc_trials loopType="TrialHandler"
      Selected rows = $enc_selection
      conditionsFile = $enc_table
      loopType = sequential
      nReps = 1
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      Routine enc_fx
      Routine enc_trial
    LoopTerminator enc_trials
    Routine recognition_title
    Routine block_title
    LoopInitiator rec_trials loopType="TrialHandler"
      Selected rows = $rec_selection
      conditionsFile = $rec_table
      loopType = sequential
      nReps = 1
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      Routine inter_session_break
      Routine rec_trial
    LoopTerminator rec_trials
    Routine end_run
    Routine wait_for_last_scan
  LoopTerminator run
  Routine inter_task_break
