PsychoPy2experiment version="2020.1.3"
Settings
  Completed URL = https://docs.google.com/forms/d/e/1FAIpQLSe-JyQOJB2rcwl0jYrK_pOr_J8RNK4YRzq_I4WmRa4Pfox_aA/viewform?usp=sf_link
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['ID'],'PRACTICE', expName, expInfo['date'])
  Experiment info = {'ID': ''}
  Full-screen window = True
  Monitor = AOC
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[0.804,0.804,0.961]
  expName = TRK-online
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Routines
  Routine enc_instructions_1
    TextComponent enc_instructions_1_text
      color = black
      letterHeight = 0.03
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 0.65
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      text:
        Ön ennek a modern képgalériának a kurátora.

        A legújabb kiállításra a vártnál több kép érkezett.
        Kurátorként az Ön feladata lesz eldönteni, mely képeket válogatjuk be a kiállított darabok közé, és hogy a mások által beválogatott képek illeszkednek-e a galéria adott pontjára.

        Az Ön ideje nagyon drága a galériának, így a döntésre egy-egy képről csak 3 másodperce lesz.
    ImageComponent enc_instructions_1_image
      image = stimuli/GalleryBuildingFromOutside.jpg
      pos = (0.4688, 0.0)
      size = (0.625, 0.8333)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = norm
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    KeyboardComponent enc_instructions_1_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent instructions_1_continue
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine enc_instructions_2
    TextComponent enc_instructions_2_text
      color = black
      letterHeight = 0.03
      pos = (-0.35, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 0.52
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      text:
        Ez a kiállítóterem, nézze meg figyelmesen.

        A feladat során a képek a falra vetítve jelennek meg. A képek előtt egy keresztet fog látni, ami jelzi a képek pontos helyét.

        A 'Kép' nevű alfeladat alatt döntse el a képekről, hogy ki legyenek-e állítva a galériában.

        A beválogatott képek száma nincsen korlátozva. Minden egyes képről Ön dönt.

        Ha több képet válogat be, mint amennyi a galériába fér, akkor a képeket az év során felváltva állítjuk ki.
    ImageComponent enc_instructions_2_image
      image = stimuli/GalleryInterior.png
      pos = (0.4427, 0)
      size = (0.7604, 0.8185)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = norm
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    KeyboardComponent enc_instructions_2_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent instructions_2_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine rec_instructions_1
    TextComponent rec_instructions_1_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        A Képfelismerés feladatban ismét absztrakt képeket fog látni, és ezekről kell eldöntenie, látta-e őket a megelőző Galériaberendezés feladataban, és hogy ugyanott látta-e őket.

        A feladatot két alfeladatra bontottuk. Az egyikben a képekről, a másikban a képek pozíciójáról kell döntenie.
    KeyboardComponent rec_instructions_1_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent rec_instructions_1_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine rec_instructions_2
    TextComponent rec_instructions2_text
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 1
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      text:
        A 'Kép' nevű alfeladatban azt kell eldöntenie, látta-e már ezeket a képeket a megelőző Galériaberendezés blokkban.

        Két csoportba oszthatóak a megjelenő képek:
         - Régi: Ezek a képek pontosan megegyeznek a 'Galériaberendezés' megelőző sorozatában látott képek egyikével.
         - Új: Képek, amelyek nem jelentek meg a 'Galériaberendezés' feladatban. Ezek a képek lehetnek hasonlóak a korábban látottakhoz.

        Az Ön feladata, hogy eldöntse, melyik kép ugyanaz, mint a 'Galéria berendezés' feladatban, és melyik új.
        A döntésre 4 másodperce lesz.
        Minden képet nézzen meg figyelmesen, és minden képre adjon választ, akkor is, ha a döntés nehéz.

        Döntését így jelölje:
        Régi - F
        Új - J
    KeyboardComponent rec_instructions_2_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent rec_instructions_2_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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    TextComponent rec_instruction_2_title
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = 'Kép' alfeladat
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  Routine start_practice
    TextComponent start_practice_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Kezdődik a gyakorlás...
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    CodeComponent reset_practice_block
      Code Type = Auto->JS
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      Begin Routine:
        practice_start = 0
        practice_end = 0
  Routine end_practice
    TextComponent end_practice_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600.0
      text = Ez volt a gyakorlás.
      wrapWidth = 0.8
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    KeyboardComponent end_practice_key
      allowedKeys = 'right', 'left'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 599.0
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    CodeComponent end_practice_block_counter
      Code Type = Auto->JS
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      Begin Routine:
        block_counter = 0
    TextComponent end_practice_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 599.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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    TextComponent coming_up_next_text
      color = black
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600.0
      text [set every repeat] = $coming_up_text
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  Routine enc_practice_feedback
    CodeComponent enc_practice_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        response = enc_trial_key_practice.keys
        feedback_text = ''
        if response == 'f':
            feedback_text = 'Az Ön válasza:\nA kép nem marad.'
        elif response == 'j':
            feedback_text = 'Az Ön válasza:\nA kép marad.'
        else:
            feedback_text = 'Nem adott választ.'
    ImageComponent enc_practice_feedback_interior
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = norm
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    ImageComponent enc_practice_feedback_image
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size [set every repeat] = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = norm
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    TextComponent enc_practice_feedback_text
      color = black
      letterHeight = 0.05
      pos [set every repeat] = (CurrentX, CurrentY - 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
      units = norm
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    TextComponent enc_practice_feedback_block
      color = black
      letterHeight = 0.05
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $block_name
      units = norm
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  Routine rec_instructions_3
    TextComponent rec_instrauction_3_text
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 1
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      text:
        A 'Hely' nevű alfeladatban azt kell eldöntenie, a képek a képernyő ugyanazon pontján jelennek-e meg, mint a megelőző Galériaberendezés sorozatban.
        Ebben az alfeladatban minden kép pontos mása annak, amit a Galériaberendezés alatt látott.

        A helyek azonban két csoportba oszthatóak:
         - Régi: Pontosan ugyanitt jelent meg ez a kép a Galériaberendezés feladatban.
         - Új: Egy másik helyen jelent meg ez a kép a Galériaberendezés feladatban. Ez a hely lehet közeli az eredeti helyhez.

        Az Ön feladata, hogy eldöntse, melyik kép jelent meg ugyanott, és melyik új helyen.
        A döntésre 4 másodperce lesz.
        Minden képet nézzen meg figyelmesen, és minden képre adjon választ, akkor is, ha a döntés nehéz.

        A döntését így jelölje:
        Régi - F
        Új - J
    KeyboardComponent rec_instructions_3_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 5
      stopVal [duration (s)] = 295
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    TextComponent rec_instructions_3_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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    TextComponent rec_instruction_3_title
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = 'Hely' alfeladat
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  Routine rec_instructions_4
    TextComponent rec_instructions_4_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        A következőkben pár példával mutatjuk be Önnek, milyen hasonlóak lehetnek az új képek és helyek.

        A bemutatóban elsőként egy, a Galériaberendezés gyakorlása során már látott képet/helyet mutatunk Önnek, 'Régi' felirattal.
        A régi képet/helyet mindig egy új kép/hely követi a bemutatóban, 'Új' felirattal.
    KeyboardComponent rec_instructions_4_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
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    TextComponent rec_instructions_4_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine demo
    ImageComponent demo_interior
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = norm
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    ImageComponent demo_main_image
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size [set every repeat] = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = norm
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    ImageComponent demo_image
      image [set every repeat] = $DemoImage
      pos [set every repeat] = (DemoX, DemoY)
      size [set every repeat] = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = norm
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    TextComponent demo_text
      color = black
      letterHeight = 0.05
      pos = (-0.025, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text [set every repeat] = $DemoText
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    KeyboardComponent demo_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 298
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    TextComponent demo_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 298.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine demo_end
    TextComponent demo_end_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Ez volt a bemutató. Most a Képfelismerés gyakorlása következik.
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    KeyboardComponent demo_end_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
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    TextComponent demo_end_continue
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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    CodeComponent demo_end_set_text
      Code Type = Auto->JS
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      End Routine:
        coming_up_text='Most a két feladattípus együttes gyakorlása következik.'
  Routine start_rec_block_3
  Routine start_rec_block_2
  Routine start_rec_practice_block
    CodeComponent start_rec_practice_code
      Code Type = Both
      Begin Experiment:
        rec_practice_block = [0,1,2]
        block_name = "Kép"
        block_counter = 0
      Begin JS Experiment:
        rec_practice_block = [0, 1, 2];
        block_name = "K\u00e9p";
        block_counter = 0;
      Begin JS Routine:
        block_counter = (block_counter + 1);
        if ((block_counter >= 2)) {
            rec_practice_block = [3, 4, 5];
            block_name = "Hely";
        }
      Begin Routine:
        block_counter = block_counter + 1
        if block_counter >= 2:
            rec_practice_block = [3,4,5]
            block_name = "Hely"
    TextComponent rec_practice_block_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $block_name
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  Routine rec_practice_feedback
    CodeComponent rec_practice_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        correct_response = ''
        if StimType == 'FOIL':
            correct_response = 'A helyes válasz: Új'
        elif StimType == 'LURE':
            correct_response = 'A helyes válasz: Új'
        elif StimType == 'TARGET':
            correct_response = 'A helyes válasz: Régi'

        response = ''
        if rec_trial_key_practice_practice.keys == 'f':
            response = 'Az Ön válasza: Régi'

        elif rec_trial_key_practice.keys == 'j':
            response = 'Az Ön válasza: Új'

        feedback_text = correct_response +'\n'+ response
    TextComponent rec_practice_feedback_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $feedback_text
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  Routine demo_start
    TextComponent demo_start_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Kezdődik a bemutató...
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  Routine start_run
    CodeComponent run_counter
      Code Type = Auto->JS
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      Begin Experiment:
        run_counter = 0
      Begin Routine:
        run_counter = run_counter + 1
        end_run_text = 'Rövid szünet.\n\nA feladat folytatáshoz nyomja le a jobb nyilat.'

        if run_counter == 3:
            end_run_text = 'Vége a feladat első felének. A folytatáshoz nyomja le a jobb nyilat.'
        elif run_counter ==6:
            end_run_text = 'Vége a feladatnak. A folytatáshoz nyomja le a jobb nyilat.'
    TextComponent start_enc_run_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Kezdődik a feladat...
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  Routine encoding_title
    TextComponent encoding_title_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Galéria berendezés
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  Routine recognition_title
    TextComponent start_recognition_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Képfelismerés
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  Routine practice_block_start
    CodeComponent create_practice_block
      Code Type = Both
      Begin Experiment:
        practice_end = 0
        step = 1
      Begin JS Experiment:
        practice_end = 0;
        step = 1;
      Begin JS Routine:
        practice_start = practice_end;
        practice_end = (practice_start + 3);
        practice_selection = Array.from({length: practice_end - practice_start}, (_, index) => index + practice_start);
        block_name = "";
        if ((TrialType === "OBJ")) {
            block_name = "K\u00e9p";
        } else {
            if ((TrialType === "LOC")) {
                block_name = "Hely";
            } else {
                block_name = "Block Unknown";
            }
        }
      Begin Routine:
        practice_start = practice_end
        practice_end = practice_start + 3
        practice_selection = np.arange(practice_start, practice_end, step)

        block_name = ''
        if TrialType=='OBJ':
            block_name='Kép'
        elif TrialType=='LOC':
            block_name='Hely'
        else:
            block_name='Block Unknown'
    TextComponent start_practice_block
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $block_name
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  Routine general_instructions_2
    TextComponent general_instructions_text_2
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        Mindkét feladatnak két típusa van: 'Kép' és 'Hely'.

        Galériaberendezés:
        Ha az alfeladat neve 'Kép', akkor arról kell döntést hoznia, hogy a bemutatott kép ki legyen-e állítva a következő kiállításon.
        Ha az alfeladat neve 'Hely', akkor azt kell eldöntenie, a bemutatt kép az aktuálisan jelzett helyen legyen-e kiállítva.
    KeyboardComponent general_instructions_key_2
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 290.0
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    TextComponent general_instructions_continue_2
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 290.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine general_instructions_1
    TextComponent general_instructions_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        A vizsgálat kétféle feladattípusból áll.

        Az első feladattípus a Galériaberendezés. Ebben a feladatban képeket kell beválogatnia egy modern művészeti galériába.

        A második feladattípus a Képfelismerés. Ebben a feladatban azt kell eldöntenie, a bemutatott képeket látta-e a megelőző Galériaberendezés feladat során.

        A vizsgálatot 6 körre osztottuk, úgy, hogy egy Képfelismerés feladatot Önnek mindig a közvetlenül megelőző Galériaberendezés feladat alapján kell elvégeznie.

        Egy kör 8 percet vesz igénybe, a körök között rövid (maximum 2 perces) szünetet tud tartani. A harmadik kör után tarthat egy hosszabb (maximum 10 perces) szünetet.
    KeyboardComponent general_instructions_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 290.0
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    TextComponent general_instructions_continue
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 290.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine general_instructions_3
    TextComponent general_instructions_text_3
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        Képfelismerés:
        Ha az alfeladat neve 'Kép', akkor arra kell választ adnia, a bemutatott kép pontosan megegyezik-e a Galériaberendezés feladatban látot képek egyikével.
        Ha az alfeladat neve 'Hely', akkor a képek pozíciójáról kell döntenie: a képernyő ugyanezen pontján látta korábban a bemutatott képet?

        A vizsgálatot 6 körre osztottuk, úgy, hogy egy Képfelismerés blokkot Önnek mindig a közvetlenül megelőző Galériaberendezés blokk alapján kell elvégeznie.
        A sorrend lehet például:

        'Kép' Galériaberendezés -> 'Kép' Képfelismerés
        'Hely' Galériaberendezés -> 'Hely' Képfelismerés
    KeyboardComponent general_instructions_key_3
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 290.0
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    TextComponent general_instructions_continue_3
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 290.0
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      text:
        Most részletesebben bemutatjuk Önnek a Galériaberendezés feladatot.
        A folytatáshoz nyomja le a jobb nyilat.
  Routine enc_instructions_4
    TextComponent enc_instructions_3_text
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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      text:
        A 'Kép' alfeladat alatt a 'J' billentyűvel jelölje azokat a képeket, amelyeket beválogat a kiállításra.

        Az 'F' billentyűvel jelölje a képeket, amelyeket nem válogat be a kiállításra.


        A 'Hely' nevű alfeladatban a 'J' billentyűvel jelölje azokat a képeket, amelyek maradhatnak a galéria adott pontján.

        Az 'F' billentyűvel jelölje a képeket, amelyek nem maradhatnak a galéria adott pontján.

        Most a Galériaberendezés gyakorlása következik.
    KeyboardComponent enc_instructions_3_key
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295
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    TextComponent enc_instructions_3_continue
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = Ha készen áll a gyakorlásra, nyomja le a jobb nyilat.
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    CodeComponent enc_instructions_set_text
      Code Type = Auto->JS
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      End Routine:
        coming_up_text='Most a Képfelismerés feladat bemutatása következik.'
  Routine enc_instructions_3
    TextComponent enc_instructions_2_text_2
      color = black
      letterHeight = 0.03
      pos = (-0.35, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 0.52
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      text:
        A 'Hely' nevű alfeladat alatt azt döntse el, a bemutatott kép maradhat-e a galéria adott pontján.
        Ezeket a képeket mindenképp kiállítjuk, itt csak a képek helyéről tud dönteni.

        Minden képet nézzen meg figyelmesen, és minden képre adjon választ.
    ImageComponent enc_instructions_2_image_2
      image = stimuli/GalleryInterior.png
      pos = (0.4427, 0)
      size = (0.7604, 0.8185)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = norm
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    KeyboardComponent enc_instructions_2_key_2
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent instructions_2_continue_2
      color = black
      letterHeight = 0.03
      pos = (0,-0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = A folytatáshoz nyomja le a jobb nyilat. 
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  Routine block_title
    TextComponent block_title_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $block_name
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    CodeComponent block_title_set_text
      Code Type = Auto->JS
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      End Routine:
        coming_up_text='A feladat következik. A feladat során már nem kap visszajelzést.'
  Routine enc_fx_practice
    CodeComponent get_screen_size_practice
      Code Type = Auto->JS
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      Begin Experiment:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
      Begin Routine:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
    ImageComponent enc_fx_interior_practice
      durationEstim = 1.5
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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    TextComponent enc_fx_cross_practice
      color = black
      durationEstim = 1.5
      letterHeight = 0.1
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = +
      units = norm
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    KeyboardComponent enc_fx_key_practice
      allowedKeys = 'f', 'j'
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
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    TextComponent enc_fx_text_block_practice
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text [set every repeat] = $block_name
      units = norm
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    TextComponent enc_fx_instructions_text_practice
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = [F - Nem marad]      [J - Marad]
      units = norm
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  Routine enc_trial_practice
    CodeComponent get_size_practice
      Code Type = Auto->JS
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      Begin Experiment:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
      Begin Routine:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
    ImageComponent enc_trial_interior_practice
      image = stimuli/GalleryInterior.png
      pos = (0, -0)
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = norm
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    ImageComponent enc_trial_main_image_practice
      image [set every repeat] = $CurrentImage
      pos [set every repeat] = (CurrentX, CurrentY)
      size [set every repeat] = (0.3125, 0.3125*scr_resolution)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = norm
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    KeyboardComponent enc_trial_key_practice
      allowedKeys = 'f', 'j'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent enc_trial_text_block_practice
      color = black
      letterHeight = 0.05
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $block_name
      units = norm
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    TextComponent enc_trial_instructions_text_practice
      color = black
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = [F - Nem marad]      [J - Marad]
      units = norm
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  Routine rec_fx_practice
    CodeComponent screen_size_practice
      Code Type = Auto->JS
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      Begin Experiment:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
      Begin Routine:
        w_size = win.size

        x_size = w_size[0]
        y_size = w_size[1]

        scr_resolution = x_size/y_size
    ImageComponent rec_fx_interior_practice
      durationEstim = 1.5
      image = stimuli/GalleryInterior.png
      size = (2.0, 2.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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    TextComponent rec_fx_cross_practice
      color = black
      durationEstim = 1.5
      letterHeight = 0.1
      pos [set every repeat] = (CurrentX, CurrentY)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      text = +
      units = norm
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    KeyboardComponent rec_fx_key_practice
      allowedKeys = 'f','j'
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
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    TextComponent rec_fx_text_block_practice
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, 0.87)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $Jitter/1000
      units = norm
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      text [set every repeat]:
        $block_name
    TextComponent rec_fx_instructions_text_practice
      color = black
      durationEstim = 1.5
      letterHeight = 0.05
      pos = (0, -0.833)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = Jitter/1000
      text = [F - Régi]      [J - Új]
      units = norm
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Flow
  Routine general_instructions_1
  Routine general_instructions_2
  Routine general_instructions_3
  Routine encoding_title
  Routine enc_instructions_1
  Routine enc_instructions_2
  Routine enc_instructions_3
  Routine enc_instructions_4
  Routine start_practice
  Routine encoding_title
  LoopInitiator enc_practice_trials loopType="TrialHandler"
    Selected rows = 1,4
    conditionsFile = stimuli_tables/encoding_practice_trials.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('TrialIndex', 1), ('Jitter', 800), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/170a.jpg'), ('CurrentX', 0.078125), ('CurrentY', -0.138888888888889), ('TripletMemberA', 'stimuli/fractals/170a.jpg'), ('TripletMemberB', 'stimuli/fractals/170b.jpg'), ('TripletMemberC', 'stimuli/fractals/170c.jpg'), ('Xcoordinate', 0.078125), ('Ycoordinate', -0.138888888888889), ('Xcoordinate_lure1', 0.234375), ('Ycoordinate_lure1', -0.138888888888889), ('Xcoordinate_lure2', -0.078125), ('Ycoordinate_lur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,
      OrderedDict([('TrialIndex', 2), ('Jitter', 4000), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'TARGET'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/171a.jpg'), ('CurrentX', 0.390625), ('CurrentY', 0.4166666666666671), ('TripletMemberA', 'stimuli/fractals/171a.jpg'), ('TripletMemberB', 'stimuli/fractals/171b.jpg'), ('TripletMemberC', 'stimuli/fractals/171c.jpg'), ('Xcoordinate', 0.390625), ('Ycoordinate', 0.4166666666666671), ('Xcoordinate_lure1', 0.234375), ('Ycoordinate_lure1', 0.4166666666666671), ('Xcoordinate_lure2', 0.390625), ('Ycoordinate_lu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,
      OrderedDict([('TrialIndex', 3), ('Jitter', 2000), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'FOIL'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/172a.jpg'), ('CurrentX', -0.390625), ('CurrentY', -0.138888888888889), ('TripletMemberA', 'stimuli/fractals/172a.jpg'), ('TripletMemberB', 'stimuli/fractals/172b.jpg'), ('TripletMemberC', 'stimuli/fractals/172c.jpg'), ('Xcoordinate', -0.390625), ('Ycoordinate', -0.138888888888889), ('Xcoordinate_lure1', -0.234375), ('Ycoordinate_lure1', -0.138888888888889), ('Xcoordinate_lure2', -0.390625), ('Ycoordinate_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,
      OrderedDict([('TrialIndex', 4), ('Jitter', 1000), ('ScannerRun', 1), ('BlockNr', 2), ('TrialType', 'LOC'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/173a.jpg'), ('CurrentX', 0.078125), ('CurrentY', 0.4166666666666671), ('TripletMemberA', 'stimuli/fractals/173a.jpg'), ('TripletMemberB', 'stimuli/fractals/173b.jpg'), ('TripletMemberC', 'stimuli/fractals/173c.jpg'), ('Xcoordinate', 0.078125), ('Ycoordinate', 0.4166666666666671), ('Xcoordinate_lure1', 0.078125), ('Ycoordinate_lure1', 0.138888888888889), ('Xcoordinate_lure2', -0.078125), ('Ycoordinate_lure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
    Routine practice_block_start
    LoopInitiator enc_practice_block loopType="TrialHandler"
      Selected rows = $practice_selection
      conditionsFile = stimuli_tables/encoding_practice_trials.csv
      loopType = random
      nReps = 1
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      conditions:
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      Routine enc_fx_practice
      Routine enc_trial_practice
      Routine enc_practice_feedback
    LoopTerminator enc_practice_block
  LoopTerminator enc_practice_trials
  Routine end_practice
  Routine recognition_title
  Routine rec_instructions_1
  Routine rec_instructions_2
  Routine rec_instructions_3
  Routine rec_instructions_4
  Routine demo_start
  LoopInitiator demo_trials loopType="TrialHandler"
    conditionsFile = stimuli_tables/stimuli_demo.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Task', 'Demo'), ('TrialType', 'OBJ'), ('StimType', 'TARGET'), ('CurrentImage', 'stimuli/fractals/163a.jpg'), ('DemoImage', None), ('CurrentX', -0.234375), ('CurrentY', -0.4166666666666667), ('DemoX', None), ('DemoY', None), ('InPractice', None), ('DemoText', 'Régi Kép'), ('Jitter', 800)]),
      OrderedDict([('Task', 'Demo'), ('TrialType', 'OBJ'), ('StimType', 'FOIL'), ('CurrentImage', 'stimuli/fractals/173c.jpg'), ('DemoImage', None), ('CurrentX', -0.234375), ('CurrentY', -0.4166666666666667), ('DemoX', None), ('DemoY', None), ('InPractice', None), ('DemoText', 'Új Kép'), ('Jitter', 1500)]),
      OrderedDict([('Task', 'Demo'), ('TrialType', 'OBJ'), ('StimType', 'TARGET'), ('CurrentImage', 'stimuli/fractals/177b.jpg'), ('DemoImage', None), ('CurrentX', -0.390625), ('CurrentY', 0.4166666666666667), ('DemoX', None), ('DemoY', None), ('InPractice', None), ('DemoText', 'Régi Kép'), ('Jitter', 1100)]),
      OrderedDict([('Task', 'Demo'), ('TrialType', 'OBJ'), ('StimType', 'LURE'), ('CurrentImage', 'stimuli/fractals/177c.jpg'), ('DemoImage', None), ('CurrentX', -0.390625), ('CurrentY', 0.4166666666666667), ('DemoX', None), ('DemoY', None), ('InPractice', None), ('DemoText', 'Új Kép'), ('Jitter', 1800)])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
    Routine demo
  LoopTerminator demo_trials
  Routine demo_end
  Routine start_practice
  LoopInitiator rec_practice_blocks loopType="TrialHandler"
    Selected rows = 1,4
    conditionsFile = stimuli_tables/recognition_practice_trials.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('TrialIndex', 1), ('Jitter', 800), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/170c.jpg'), ('CurrentX', 0.078125), ('CurrentY', -0.138888888888889), ('TripletMemberA', 'stimuli/fractals/170a.jpg'), ('TripletMemberB', 'stimuli/fractals/170b.jpg'), ('TripletMemberC', 'stimuli/fractals/170c.jpg'), ('Xcoordinate', 0.078125), ('Ycoordinate', -0.138888888888889), ('Xcoordinate_lure1', 0.234375), ('Ycoordinate_lure1', -0.138888888888889), ('Xcoordinate_lure2', -0.078125), ('Ycoordinate_lur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,
      OrderedDict([('TrialIndex', 2), ('Jitter', 4000), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'TARGET'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/171a.jpg'), ('CurrentX', 0.390625), ('CurrentY', 0.4166666666666671), ('TripletMemberA', 'stimuli/fractals/171a.jpg'), ('TripletMemberB', 'stimuli/fractals/171b.jpg'), ('TripletMemberC', 'stimuli/fractals/171c.jpg'), ('Xcoordinate', 0.390625), ('Ycoordinate', 0.4166666666666671), ('Xcoordinate_lure1', 0.234375), ('Ycoordinate_lure1', 0.4166666666666671), ('Xcoordinate_lure2', 0.390625), ('Ycoordinate_lu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,
      OrderedDict([('TrialIndex', 3), ('Jitter', 2000), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'FOIL'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/176a.jpg'), ('CurrentX', 0.234375), ('CurrentY', 0.138888888888889), ('TripletMemberA', 'stimuli/fractals/172a.jpg'), ('TripletMemberB', 'stimuli/fractals/172b.jpg'), ('TripletMemberC', 'stimuli/fractals/172c.jpg'), ('Xcoordinate', -0.390625), ('Ycoordinate', -0.138888888888889), ('Xcoordinate_lure1', -0.234375), ('Ycoordinate_lure1', -0.138888888888889), ('Xcoordinate_lure2', -0.390625), ('Ycoordinate_lu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,
      OrderedDict([('TrialIndex', 4), ('Jitter', 1000), ('ScannerRun', 1), ('BlockNr', 2), ('TrialType', 'LOC'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/173a.jpg'), ('CurrentX', -0.078125), ('CurrentY', 0.4166666666666671), ('TripletMemberA', 'stimuli/fractals/173a.jpg'), ('TripletMemberB', 'stimuli/fractals/173b.jpg'), ('TripletMemberC', 'stimuli/fractals/173c.jpg'), ('Xcoordinate', 0.078125), ('Ycoordinate', 0.4166666666666671), ('Xcoordinate_lure1', 0.078125), ('Ycoordinate_lure1', 0.138888888888889), ('Xcoordinate_lure2', -0.078125), ('Ycoordinate_lur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
    Routine practice_block_start
    LoopInitiator rec_practice_trials loopType="TrialHandler"
      Selected rows = $practice_selection
      conditionsFile = stimuli_tables/recognition_practice_trials.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Task', 'RecognitionPractice'), ('TrialIndex', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'FOIL'), ('CurrentImage', 'stimuli/fractals/156b.jpg'), ('CurrentX', 0.2344), ('CurrentY', -0.1389), ('Jitter', 0.6), ('Filler', 0)]),
        OrderedDict([('Task', 'RecognitionPractice'), ('TrialIndex', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'LURE'), ('CurrentImage', 'stimuli/fractals/166c.jpg'), ('CurrentX', -0.0781), ('CurrentY', 0.4167), ('Jitter', 0.6), ('Filler', 0)]),
        OrderedDict([('Task', 'RecognitionPractice'), ('TrialIndex', 2), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'TARGET'), ('CurrentImage', 'stimuli/fractals/167a.jpg'), ('CurrentX', 0.2344), ('CurrentY', 0.4167), ('Jitter', 2.0), ('Filler', 0)]),
        OrderedDict([('Task', 'RecognitionPractice'), ('TrialIndex', 4), ('BlockNr', 2), ('TrialType', 'LOC'), ('StimType', 'FOIL'), ('CurrentImage', 'stimuli/fractals/159a.jpg'), ('CurrentX', -0.0781), ('CurrentY', -0.4167), ('Jitter', 1.0), ('Filler', 0)]),
        OrderedDict([('Task', 'RecognitionPractice'), ('TrialIndex', 5), ('BlockNr', 2), ('TrialType', 'LOC'), ('StimType', 'LURE'), ('CurrentImage', 'stimuli/fractals/148b.jpg'), ('CurrentX', 0.2344), ('CurrentY', -0.4167), ('Jitter', 1.5), ('Filler', 0)]),
        OrderedDict([('Task', 'RecognitionPractice'), ('TrialIndex', 6), ('BlockNr', 2), ('TrialType', 'LOC'), ('StimType', 'TARGET'), ('CurrentImage', 'stimuli/fractals/166a.jpg'), ('CurrentX', -0.0781), ('CurrentY', 0.4167), ('Jitter', 1.0), ('Filler', 0)])]
      Routine rec_fx_practice
      Routine rec_practice_feedback
    LoopTerminator rec_practice_trials
  LoopTerminator rec_practice_blocks
  Routine end_practice
  Routine start_practice
  LoopInitiator full_practce loopType="TrialHandler"
    Selected rows = 1, 4
    conditionsFile = stimuli_tables/recognition_full_practice_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('TrialIndex', 1), ('Jitter', 800), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/177c.jpg'), ('CurrentX', 0.078125), ('CurrentY', -0.13888888900000002), ('TripletMemberA', 'stimuli/fractals/170a.jpg'), ('TripletMemberB', 'stimuli/fractals/170b.jpg'), ('TripletMemberC', 'stimuli/fractals/170c.jpg'), ('Xcoordinate', 0.078125), ('Ycoordinate', -0.41666666700000005), ('Xcoordinate_lure1', -0.078125), ('Ycoordinate_lure1', -0.41666666700000005), ('Xcoordinate_lure2', 0.234375), ('Ycoordina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,
      OrderedDict([('TrialIndex', 2), ('Jitter', 4000), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'TARGET'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/178a.jpg'), ('CurrentX', 0.390625), ('CurrentY', 0.41666666700000005), ('TripletMemberA', 'stimuli/fractals/171a.jpg'), ('TripletMemberB', 'stimuli/fractals/171b.jpg'), ('TripletMemberC', 'stimuli/fractals/171c.jpg'), ('Xcoordinate', 0.390625), ('Ycoordinate', 0.41666666700000005), ('Xcoordinate_lure1', 0.234375), ('Ycoordinate_lure1', 0.41666666700000005), ('Xcoordinate_lure2', 0.390625), ('Ycoordinate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,
      OrderedDict([('TrialIndex', 3), ('Jitter', 2000), ('ScannerRun', 1), ('BlockNr', 1), ('TrialType', 'OBJ'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/179c.jpg'), ('CurrentX', 0.234375), ('CurrentY', 0.13888888900000002), ('TripletMemberA', 'stimuli/fractals/172a.jpg'), ('TripletMemberB', 'stimuli/fractals/172b.jpg'), ('TripletMemberC', 'stimuli/fractals/172c.jpg'), ('Xcoordinate', -0.390625), ('Ycoordinate', -0.41666666700000005), ('Xcoordinate_lure1', -0.390625), ('Ycoordinate_lure1', -0.13888888900000002), ('Xcoordinate_lure2', -0.234375), ('Ycoordin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,
      OrderedDict([('TrialIndex', 4), ('Jitter', 1000), ('ScannerRun', 1), ('BlockNr', 2), ('TrialType', 'LOC'), ('StimType', 'LURE'), ('Order', 1), ('Delay', 1), ('CurrentImage', 'stimuli/fractals/180a.jpg'), ('CurrentX', -0.078125), ('CurrentY', 0.13888888900000002), ('TripletMemberA', 'stimuli/fractals/173a.jpg'), ('TripletMemberB', 'stimuli/fractals/173b.jpg'), ('TripletMemberC', 'stimuli/fractals/173c.jpg'), ('Xcoordinate', -0.078125), ('Ycoordinate', 0.41666666700000005), ('Xcoordinate_lure1', 0.078125), ('Ycoordinate_lure1', 0.41666666700000005), ('Xcoordinate_lure2', -0.078125), ('Ycoordinat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
    Routine practice_block_start
    LoopInitiator enc_full_practice loopType="TrialHandler"
      Selected rows = $practice_selection
      conditionsFile = stimuli_tables/encoding_full_practice_trials.csv
      isTrials = False
      loopType = random
      nReps = 1
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      conditions:
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      Routine enc_fx_practice
      Routine enc_trial_practice
      Routine enc_practice_feedback
    LoopTerminator enc_full_practice
    Routine recognition_title
    Routine block_title
    LoopInitiator rec_full_practice loopType="TrialHandler"
      Selected rows = $practice_selection
      conditionsFile = stimuli_tables/recognition_full_practice_trials.csv
      loopType = random
      nReps = 1
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      conditions:
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      Routine rec_fx_practice
      Routine rec_practice_feedback
    LoopTerminator rec_full_practice
  LoopTerminator full_practce
  Routine end_practice
